<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Range">
          <rx:Start>0</rx:Start>
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Folder</Name>
        <Text><![CDATA[Folder]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\dev\av-dome\src\LocalFiles\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>FileName</Name>
        <Text><![CDATA[FileName]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>filtered_pink_pulse_train_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoadSound</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}.wav</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>C:\dev\av-dome\src\LocalFiles\filtered_pink_pulse_train_19.wav</al:FileName>
                <al:BufferLength>0</al:BufferLength>
                <al:SampleRate>48000</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>-32768</dsp:Min>
                <dsp:Max>32767</dsp:Max>
                <dsp:RangeMin>-1</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item1</rx:KeySelector>
        <rx:ElementSelector>Item2</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>AdutoryStimulusDict</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AdutoryStimulusDict</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item2[Item1]</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Submatrix">
          <dsp:StartRow>0</dsp:StartRow>
          <dsp:EndRow>1</dsp:EndRow>
          <dsp:StartCol>0</dsp:StartCol>
          <dsp:EndCol>700</dsp:EndCol>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>