<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:p2="clr-namespace:UclOpenAvDome;assembly=Extensions"
                 xmlns:uoc="clr-namespace:OpenRigs.Core;assembly=OpenRigs.Core"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p3="clr-namespace:OpenRigs.Video;assembly=OpenRigs.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadRigConfig</Name>
        <Description>Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="uoc:ResolveRigConfigDirectory">
                <uoc:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</uoc:ConfigRoot>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigConfigDirectory</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Core:ReadRigConfig.bonsai">
              <FileName>rig.yml</FileName>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p2:DeserializeFromYaml">
        <p2:Type xsi:type="TypeMapping" TypeArguments="p2:UclOpenAvDomeRig" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigConfigs</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Camera</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:RigDevice">
          <p2:Name>Camera-Face</p2:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Camera-Face</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:RigDevice">
          <p2:Name>Camera-Pupil</p2:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Camera-Pupil</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:RigDevice">
          <p2:Name>Camera-Body</p2:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Camera-Body</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM10</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Enabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraTriggerController</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StartCameras</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                      <beh:StartCameras>CameraOutput0</beh:StartCameras>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StopCameras</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                      <beh:StopCameras>CameraOutput0</beh:StopCameras>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Trigger0Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger0" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>50</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Trigger0Frequency</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Camera0Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                      <beh:Camera0Frequency>50</beh:Camera0Frequency>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Trigger1Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger1" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>50</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Trigger1Frequency</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Camera1Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateCamera1FrequencyPayload">
                      <beh:Camera1Frequency>50</beh:Camera1Frequency>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the commands subject for the behavior board that triggers camera frames" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the subject carrying events from the behavior board that triggers camera frames" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="Camera0TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger0 are published" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera0TriggerEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera1Frame" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="Camera1TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger1 are published" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera1TriggerEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="17" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="17" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="16" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source3" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="23" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="25" Label="Source1" />
                  <Edge From="20" To="29" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="28" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="32" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera-Face</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera-Pupil</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera-Body</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Settings.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredSpinnaker</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ExposureTime" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="SerialNumber" />
                    <Property Name="ColorProcessing" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:TriggeredSpinnaker">
                      <spk:Index xsi:nil="true" />
                      <spk:SerialNumber>23201540</spk:SerialNumber>
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p3:ExposureTime>19000</p3:ExposureTime>
                      <p3:Gain>0</p3:Gain>
                      <p3:Binning>1</p3:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject carrying trigger events from a camera controller or behavior board. " Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0TriggerEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>Monitor</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="StringProperty">
                              <Value>Cam1Frame</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                            <Name>Timestamp</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Materialize" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:CombineLatest" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="io:WriteLine" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Dematerialize" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="6" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameEventsSubjectName" Description="The name of the subject to which indexed, timestamped camera frames are published" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FrameEvents1</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Settings.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredSpinnaker</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ExposureTime" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="SerialNumber" />
                    <Property Name="ColorProcessing" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:TriggeredSpinnaker">
                      <spk:Index xsi:nil="true" />
                      <spk:SerialNumber>23199185</spk:SerialNumber>
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p3:ExposureTime>19000</p3:ExposureTime>
                      <p3:Gain>20</p3:Gain>
                      <p3:Binning>1</p3:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject carrying trigger events from a camera controller or behavior board. " Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0TriggerEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>Monitor</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="StringProperty">
                              <Value>Cam2Frame</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                            <Name>Timestamp</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Materialize" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:CombineLatest" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="io:WriteLine" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Dematerialize" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="6" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameEventsSubjectName" Description="The name of the subject to which indexed, timestamped camera frames are published" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FrameEvents2</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Settings.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredSpinnaker</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ExposureTime" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="SerialNumber" />
                    <Property Name="ColorProcessing" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:TriggeredSpinnaker">
                      <spk:Index xsi:nil="true" />
                      <spk:SerialNumber>25366329</spk:SerialNumber>
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p3:ExposureTime>19000</p3:ExposureTime>
                      <p3:Gain>0</p3:Gain>
                      <p3:Binning>1</p3:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject carrying trigger events from a camera controller or behavior board. " Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Camera0TriggerEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>Monitor</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="StringProperty">
                              <Value>Cam3Frame</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                            <Name>Timestamp</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Materialize" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:CombineLatest" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="io:WriteLine" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Dematerialize" />
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="6" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameEventsSubjectName" Description="The name of the subject to which indexed, timestamped camera frames are published" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FrameEvents3</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DroppedFramesMonitor.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DroppedFramesMonitor.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents3</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DroppedFramesMonitor.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Camera3</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\testdata\droppedFrames.csv</io:FileName>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="25" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="25" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>