<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Drop-in stall diagnostics: dual watchdog (gl render loop + harp clock, refereed by the system clock), harp-stamped heartbeat and event-tap CSVs (RenderHeartbeat, ResponseEvents, StimulusStartEvents, TrialStartEvents). If either clock stalls for more than 5 s the workflow terminates with an exception carrying the watchdog message. Host workflow must provide the externalized subjects and PathPrefix.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT1S</gl:DueTime>
          <gl:Period>PT1S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WatchdogRenderTick</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WatchdogRenderTick</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
        <LogName>RenderHeartbeat</LogName>
        <Selector>Seconds,Value</Selector>
        <Extension>csv</Extension>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WatchdogHarpTick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT30S</rx:DueTime>
          <rx:Period>PT10S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WatchdogCheck</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WatchdogCheck</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WatchdogRenderTick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>(Item1.Timestamp.UtcTicks - Item2.Timestamp.UtcTicks) / 10000000.0</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RenderLoopStale</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Format">
        <Format>WATCHDOG: render loop stalled - no gl tick for {0:F0} s</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WatchdogCheck</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WatchdogHarpTick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>(Item1.Timestamp.UtcTicks - Item2.Timestamp.UtcTicks) / 10000000.0</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>HarpClockStale</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Format">
        <Format>WATCHDOG: harp clock stalled - no Timestamp tick for {0:F0} s</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ThrowError" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialSuccess</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
        <LogName>ResponseEvents</LogName>
        <Selector>Seconds,Value</Selector>
        <Extension>csv</Extension>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartAuditoryStimulus</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
        <LogName>StimulusStartEvents</LogName>
        <Selector>Seconds,Value</Selector>
        <Extension>csv</Extension>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>thisTrialData</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
        <LogName>TrialStartEvents</LogName>
        <Selector>Seconds,Value.trialType</Selector>
        <Extension>csv</Extension>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="HarpClockSubjectName" Description="The subject carrying the synchronized harp clock in seconds (default: Timestamp)." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="ResponseSubjectName" Description="The subject carrying trial response events (default: TrialSuccess)." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="StimulusSubjectName" Description="The subject marking stimulus start (default: StartAuditoryStimulus)." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TrialStartSubjectName" Description="The subject emitting per-trial data at trial start (default: thisTrialData)." />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="18" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="7" Label="Source1" />
      <Edge From="37" To="5" Label="Source2" />
      <Edge From="37" To="29" Label="Source2" />
      <Edge From="37" To="32" Label="Source2" />
      <Edge From="37" To="35" Label="Source2" />
      <Edge From="38" To="28" Label="Source1" />
      <Edge From="39" To="31" Label="Source1" />
      <Edge From="40" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
