<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepperDriversInitialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="SubjectName_switchState" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>_Motor0_switchState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>TRUE: Find</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>True?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>FALSE: Leave first</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MotorID" />
        <Property Name="SubjectName_StepperDriver" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SubjectName_switchState" DisplayName="SubjectName_switchState_again" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LEAVE ZERO</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MotorID" />
              <Property Name="SubjectName_StepperDriver" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Continue to leave until switch</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="SubjectName_StepperDriver" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="MotorID" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>False?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Motor0?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MoveRelativePayload">
                      <p1:Motor0MoveRelative>1000</p1:Motor0MoveRelative>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriver1Commands</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Motor1?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor1MoveRelativePayload">
                      <p1:Motor1MoveRelative>1000</p1:Motor1MoveRelative>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriver1Commands</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Motor2?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor2MoveRelativePayload">
                      <p1:Motor2MoveRelative>1000</p1:Motor2MoveRelative>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriver1Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="0" To="11" Label="Source2" />
                  <Edge From="0" To="14" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="18" Label="Source1" />
                  <Edge From="18" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="5" To="12" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="15" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="15" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Still in ZERO</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="SubjectName_switchState" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor0_switchState</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>True?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Move to ZERO</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MotorID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor0?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0MoveRelativePayload">
                <p1:Motor0MoveRelative>-100000</p1:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor1?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1MoveRelativePayload">
                <p1:Motor1MoveRelative>-100000</p1:Motor1MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor2?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MoveRelativePayload">
                <p1:Motor2MoveRelative>-100000</p1:Motor2MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="SubjectName_StepperDriver" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="SubjectName_switchState" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor0_switchState</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>False?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor0?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0AccumulatedStepsPayload">
                <p1:Motor0AccumulatedSteps>0</p1:Motor0AccumulatedSteps>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor1?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1AccumulatedStepsPayload">
                <p1:Motor1AccumulatedSteps>0</p1:Motor1AccumulatedSteps>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Motor2?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2AccumulatedStepsPayload">
                <p1:Motor2AccumulatedSteps>0</p1:Motor2AccumulatedSteps>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="19" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="13" To="28" Label="Source2" />
            <Edge From="14" To="29" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="20" To="25" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="7" To="13" Label="Source2" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="13" Label="Source3" />
      <Edge From="11" To="15" Label="Source2" />
      <Edge From="12" To="13" Label="Source4" />
      <Edge From="12" To="15" Label="Source3" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>