WorkflowBuilder(Version=2.9.0)
StringProperty(Value=GreenDome2)
-> RigConfigs(MachineName=GREEN-DOME-1)
-> Take(Count=1)
-> AsyncSubject RigConfigs

GroupWorkflow MetaData
    GroupWorkflow Declarations
        BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking
        BehaviorSubject<System.String> TrialSuccess
        BehaviorSubject<System.Boolean> SessionPaused

        IntProperty(Value=0)
        -> BehaviorSubject TrialCount

        DoubleProperty(Value=0)
        -> BehaviorSubject WaterDelivered

    GroupWorkflow HardwareDevices
        SubscribeSubject RigConfigs
        -> PropertyMapping(PortName(Selector=COMPortBehaviourBoard)) => #1
        FloatProperty(Value=100000)
        -> PropertyMapping(PulseDO1(Selector=it)) => #3
        FloatProperty(Value=100000)
        -> PropertyMapping(PulseDO2(Selector=it)) => #5
        #1, #3, #5 -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName)
            -> IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorCommands
              PortName=COM6
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorEvents

            ExternalizedMapping(PulseDO1, PulseDO2)
            -> IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorCommands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=34464
              PulseDO2=34464
              PulseDO3=20
              BehaviorEventsSubjectName=BehaviorEvents
              TriggerPulseSubjectName=TriggerValve

        GroupWorkflow StepperDriver
            SubscribeSubject RigConfigs
            -> PropertyMapping(StepperDriver1PortName(Selector=COMPortStepperDriver1), StepperDriver2PortName(Selector=COMPortStepperDriver2))
            -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM4)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn

                IntProperty(Value=0) => #2
                IntProperty(Value=0) => #3
                IntProperty(Value=0) => #4
                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                #2, #3, #4, #5, #6 -> Zip => #7
                -> BehaviorSubject StepperPosition_HOME
                #7 -> Delay(DueTime=PT3S) => #9
                Annotation "Init by Moving to ZERO"(Text="Init by Moving to ZERO") => #10
                #9, #10 -> BehaviorSubject StepperPositionCommand

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    IntProperty(Value=25) => #18
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #20
                    #18 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #22
                    #18 -> PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=200)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    IntProperty(Value=25) => #15
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #17
                    #15 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ZEROMotors
                Annotation "Need to give motors time to reach ZERO before moving again"(Text="Need to give motors time to reach ZERO before moving again")
                -> Timer(DueTime=PT4S)
                -> SelectMany SendSpoutInCommand => #2
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #5
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #6
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #7
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #3, #4, #5, #6, #7 -> Zip => #8
                #2, #8 -> SubscribeWhen
                -> Delay(DueTime=PT2S)
                -> WorkflowOutput

            GroupWorkflow MoveMotors
                SubscribeSubject StepperPositionCommand
                -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

                Disable BehaviorSubject
                -> Disable BehaviorSubject
                -> Disable BehaviorSubject

        GroupWorkflow Audio
            GroupWorkflow MixerDevice => #0
                Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
                -> Bonsai.Mixer.StartMixer
                -> BehaviorSubject Mixer
                -> WorkflowOutput

                BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #4
                SubscribeSubject Mixer => #5
                #4, #5 -> Bonsai.Mixer.PlayBuffer
            Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #1
            #0, #1 -> DelaySubscription(DueTime=PT3S)
            -> WorkflowOutput

GroupWorkflow GUI
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #1
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #3
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #7
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="0,0,0,0,0;")
    -> VisualizerMapping => #12
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #15
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #19
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #21
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #24
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #27
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #30
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #32
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #35
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #38
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #40
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #43
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #45
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #48
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #50
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text=ZERO)
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #53
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #56
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #59
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #61
    Bonsai.Gui.LabelBuilder StepSize(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #63
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #65
    SubscribeSubject StepperStepSize
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=150, Multiline=false) => #70
    -> VisualizerMapping => #71
    #1, #3, #7, #12, #15, #19, #21, #24, #27, #30, #32, #35, #38, #40, #43, #45, #48, #50, #53, #56, #59, #61, #63, #65, #71 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #75
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #80
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #85
    #80, #85 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Reward Flushes")
    -> VisualizerMapping => #89
    Bonsai.Gui.ButtonBuilder Speaker0(Enabled=true, Visible=true, Text=Speaker0)
    -> PublishSubject Speaker0
    -> VisualizerMapping => #92
    Bonsai.Gui.ButtonBuilder Speaker1(Enabled=true, Visible=true, Text=Speaker1)
    -> PublishSubject Speaker1
    -> VisualizerMapping => #95
    Bonsai.Gui.ButtonBuilder Speaker2(Enabled=true, Visible=true, Text=Speaker2)
    -> PublishSubject Speaker2
    -> VisualizerMapping => #98
    Bonsai.Gui.ButtonBuilder Speaker0_withFIR(Enabled=true, Visible=true, Text=Speaker0_withFIR)
    -> PublishSubject Speaker0_withFIR
    -> VisualizerMapping => #101
    Bonsai.Gui.ButtonBuilder Speaker1_withFIR(Enabled=true, Visible=true, Text=Speaker1_withFIR)
    -> PublishSubject Speaker1_withFIR
    -> VisualizerMapping => #104
    Bonsai.Gui.ButtonBuilder Speaker2_withFIR(Enabled=true, Visible=true, Text=Speaker2_withFIR)
    -> PublishSubject Speaker2_withFIR
    -> VisualizerMapping => #107
    #92, #95, #98, #101, #104, #107 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=SpeakerTest)
    -> VisualizerMapping => #111
    Bonsai.Gui.ButtonBuilder "LONG LEFT FLUSH"(Enabled=true, Visible=true, Text="LONG LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush_long
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #116
    Bonsai.Gui.ButtonBuilder "LONG RIGHT FLUSH"(Enabled=true, Visible=true, Text="LONG RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush_long
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #121
    #116, #121 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Rinse Flushes")
    -> VisualizerMapping => #125
    Timer(DueTime=PT0S, Period=PT0.001S) => #126
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #130
      Expression: Convert.ToSingle(it)
    #126, #130 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> WindowTime(TimeSpan=PT0.2S)
    -> SelectMany AverageWindow
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> GreaterThan(Operand=FloatProperty(Value=0))
    -> VisualizerMapping => #136
    #75, #89, #111, #125, #136 -> Bonsai.Gui.TableLayoutPanelBuilder "Flush Valves"(Enabled=true, Visible=true, ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=1, RowSpan=2)))
    #70 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    Disable SubscribeSubject PhotodiodeIndicatorState => #140
    Source2=#140 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable VisualizerMapping

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> SelectMany
            WorkflowInput Source1 => #0
            SubscribeSubject RigConfigs
            -> PropertyMapping(PulseDO1(Selector=ValveOpenTimeLeft), PulseDO2(Selector=ValveOpenTimeRight))
            -> GroupWorkflow PulseWidths => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(PulseDO1) => #1
                #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=65)) => #2
                ExternalizedMapping(Name) => #3
                #2, #3 -> MulticastSubject BehaviorCommands => #4
                ExternalizedMapping(PulseDO2) => #5
                #4, #5 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=85)) => #6
                #6, #3 -> MulticastSubject BehaviorCommands => #7
                ExternalizedMapping(PulseDO3) => #8
                #7, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=20)) => #9
                #9, #3 -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            #0, #3 -> Sample
            -> WorkflowOutput
        -> Delay(DueTime=PT0.5S) => #6
        SubscribeSubject GUI_Callback_Left_flush_long
        -> IntProperty(Value=1) => #8
        SubscribeSubject GUI_Callback_Right_flush_long
        -> IntProperty(Value=2) => #10
        #8, #10 -> Merge
        -> SelectMany
            WorkflowInput Source1 => #0
            GroupWorkflow PulseWidths => #1
                WorkflowInput Source1 => #0
                ExternalizedMapping(PulseDO1) => #1
                #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=62000)) => #2
                ExternalizedMapping(Name) => #3
                #2, #3 -> MulticastSubject BehaviorCommands => #4
                ExternalizedMapping(PulseDO2) => #5
                #4, #5 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=62000)) => #6
                #6, #3 -> MulticastSubject BehaviorCommands => #7
                ExternalizedMapping(PulseDO3) => #8
                #7, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=20)) => #9
                #9, #3 -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            #0, #1 -> Sample
            -> WorkflowOutput
        -> Delay(DueTime=PT0.5S) => #13
        #6, #13 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")

        GroupWorkflow "Internal Position Update"(Description="Internal Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn => #13
            Annotation "Sends command with every update"(Text="Sends command with every update") => #14
            #13, #14 -> MulticastSubject StepperPositionCommand => #15
            GroupWorkflow "Init Positions"(Description="Init Positions") => #16
                Disable Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> Disable IntProperty(Value=3550)
                -> Disable BehaviorSubject Motor1_Position => #2
                Disable Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> Disable IntProperty(Value=5500)
                -> Disable BehaviorSubject Motor2_Position => #5
                Disable Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> Disable IntProperty(Value=4700)
                -> Disable BehaviorSubject Motor3_Position => #8
                Disable Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> Disable IntProperty(Value=2150)
                -> Disable BehaviorSubject Motor4_Position => #11
                Disable Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> Disable IntProperty(Value=950)
                -> Disable BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Disable Merge
                -> Disable WorkflowOutput

                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=StepperMotorDefaultPosition) => #18
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #19
                #18, #19 -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject Motor1_Position => #21
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #22
                #18, #22 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject Motor2_Position => #24
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #25
                #18, #25 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject Motor3_Position => #27
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #28
                #18, #28 -> Index(Operand=IntProperty(Value=3))
                -> BehaviorSubject Motor4_Position => #30
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #31
                #18, #31 -> Index(Operand=IntProperty(Value=4))
                -> BehaviorSubject Motor5_Position => #33
                #21, #24, #27, #30, #33 -> Merge
                -> WorkflowOutput
            #15, #16 -> SubscribeWhen
            #3 -> Subtract(Operand=IntProperty(Value=1000)) => #18
            #5 -> Subtract(Operand=IntProperty(Value=1000)) => #19
            #1, #18, #19, #7, #9 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")

        GroupWorkflow "Position Callbacks"(Description="Position Callbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")

        SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    GroupWorkflow TestSpeakers
        SubscribeSubject Speaker0
        -> IntProperty(Value=0) => #1
        SubscribeSubject Speaker1
        -> IntProperty(Value=1) => #3
        SubscribeSubject Speaker2
        -> IntProperty(Value=2) => #5
        #1, #3, #5 -> Merge
        -> SelectMany PlayAuditoryWaveform
            ExternalizedMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=48000, Frequency=1000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.05, Offset=0, Phase=0)
            -> Take(Count=1)
            -> Broadcast(ChannelCount=32) => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #7
            #3, #7 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput
        -> Disable WorkflowOutput

        SubscribeSubject Speaker0_withFIR
        -> IntProperty(Value=0) => #10
        SubscribeSubject Speaker1_withFIR
        -> IntProperty(Value=1) => #12
        SubscribeSubject Speaker2_withFIR
        -> IntProperty(Value=2) => #14
        #10, #12, #14 -> Merge
        -> SelectMany PlayAuditoryWaveform_withFIR
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SpeakerID

            SubscribeSubject SpeakerID
            -> Format(Format=C:\RigConfigs\SpeakerCalibration\Speaker_{0:D3}_FIR_filter.csv, Selector=it)
            -> PropertyMapping(FileName(Selector=it))
            -> Bonsai.IO.CsvReader(FileName=C:\RigConfigs\SpeakerCalibration\Speaker_002_FIR_filter.csv, ScanPattern=%f, SkipRows=1)
            -> ToArray
            -> AsyncSubject FIR_Filter

            ExternalizedMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=48000, Frequency=1000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.1, Offset=0, Phase=0)
            -> Take(Count=1) => #11
            SubscribeSubject FIR_Filter => #12
            -> PropertyMapping(Kernel) => #13
            #12 -> MemberSelector(Selector=Length)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: int32(Math.Floor(single(it) / 2))
            -> PropertyMapping(Anchor) => #16
            #11, #13, #16 -> Bonsai.Dsp.FirFilter
              Anchor=128
              Kernel: 0,-1.36E-07,-3.37E-07,-1.08E-07,-1.89E-07,5.065E-06,7.376E-06,-7.57E-07,-1.177E-05,-1.8473E-05,-1.264E-06,1.5643E-05,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0
            -> Broadcast(ChannelCount=32) => #18
            SubscribeSubject SpeakerID
            -> ToArray
            -> PropertyMapping(Channels) => #21
            #18, #21 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput
        -> Disable WorkflowOutput

GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> IntProperty(Value=1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> IntProperty(Value=2) => #3
    #1, #3 -> Merge
    -> MulticastSubject TriggerValve
    -> WorkflowOutput

GroupWorkflow DisplayMeshMap
    Bonsai.Shaders.CreateWindow
      Width=1920
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Fixed
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
    -> PublishSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv)

    SubscribeSubject DrawStimuli => #7
    IntProperty(Value=6) => #8
    Annotation nSubdivisions(Text=nSubdivisions)
    -> IntProperty(Value=4) => #10
    -> PropertyMapping(Value) => #11
    #8, #11 -> Multiply(Operand=IntProperty(Value=4))
    -> PropertyMapping(NumberColumns) => #13
    IntProperty(Value=4) => #14
    #10 -> PropertyMapping(Value) => #15
    #14, #15 -> Multiply(Operand=IntProperty(Value=4))
    -> PropertyMapping(NumberRows) => #17
    Annotation UpperDeg(Text=UpperDeg)
    -> FloatProperty(Value=82.5) => #19
    Annotation LowerDeg(Text=LowerDeg)
    -> FloatProperty(Value=-22.5) => #21
    #19, #21 -> Zip => #22
    -> Subtract
    -> PropertyMapping(ExtentY) => #24
    #22 -> Add
    -> Divide(Operand=FloatProperty(Value=2))
    -> PropertyMapping(LocationY) => #27
    #7, #13, #17, #24, #27 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawCheckerboard.bonsai
      ExtentX=270
      ExtentY=105
      LocationX=0
      LocationY=30
      Layer=0
      Angle=0
      NumberColumns=24
      NumberRows=16
      Phase=0
    -> WorkflowOutput

    GroupWorkflow
        SubscribeSubject DrawStimuli => #0
        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S)
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #2
        -> PropertyMapping(Brightness) => #3
        Annotation PhotodiodeIndicatorLeft(Text=PhotodiodeIndicatorLeft) => #4
        #0, #3, #4 -> SelectMany Photoindicator
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Brightness))
            -> FloatProperty(Value=0)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #3
            ExternalizedMapping(LocationX(DisplayName=LocationX)) => #4
            ExternalizedMapping(LocationY(DisplayName=LocationY)) => #5
            #0, #3, #4, #5 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=-130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> WorkflowOutput
        #2 -> PropertyMapping(Brightness) => #6
        Annotation PhotodiodeIndicatorRight(Text=PhotodiodeIndicatorRight) => #7
        #0, #6, #7 -> SelectMany Photoindicator
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Brightness))
            -> FloatProperty(Value=0)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #3
            ExternalizedMapping(LocationX(DisplayName=LocationX)) => #4
            ExternalizedMapping(LocationY(DisplayName=LocationY)) => #5
            #0, #3, #4, #5 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> WorkflowOutput
        #2 -> BehaviorSubject PhotodiodeIndicatorState
