<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>20000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PhotoDiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai1</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Analog</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BlueRamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="WeightR" />
              <Property Name="WeightG" />
              <Property Name="WeightB" />
              <Property Name="Count" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BrightnessRamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <Count>52</Count>
                    <RangeMin>0</RangeMin>
                    <RangeMax>1</RangeMax>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1S</gl:DueTime>
                      <gl:Period>PT1S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                      <Property Name="Y" />
                      <Property Name="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0.06329114</gl:X>
                      <gl:Y>0.06329114</gl:Y>
                      <gl:Z>0.06329114</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="WeightR" />
                    <Property Name="Y" DisplayName="WeightG" />
                    <Property Name="Z" DisplayName="WeightB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Z>1</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="X" />
                      <Property Name="ColorG" Selector="Y" />
                      <Property Name="ColorB" Selector="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Analog</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>All this is necassary, because BonVision doesnt normalize the photodiode data!!!</Name>
                    <Text><![CDATA[All this is necassary, because BonVision doesnt normalize the photodiode data!!!]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>5.099385</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WindowTrigger">
                      <rx:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RenderFrame" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Skip">
                            <rx:Count>5</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SkipUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Average" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateGammaLookupRGB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertFromArray">
                      <dsp:Size>
                        <dsp:Width>0</dsp:Width>
                        <dsp:Height>0</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Scale>255</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="18" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source3" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="19" To="24" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GreenRamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="WeightR" />
              <Property Name="WeightG" />
              <Property Name="WeightB" />
              <Property Name="Count" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BrightnessRamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <Count>52</Count>
                    <RangeMin>0</RangeMin>
                    <RangeMax>1</RangeMax>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1S</gl:DueTime>
                      <gl:Period>PT1S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                      <Property Name="Y" />
                      <Property Name="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>1</gl:X>
                      <gl:Y>1</gl:Y>
                      <gl:Z>1</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="WeightR" />
                    <Property Name="Y" DisplayName="WeightG" />
                    <Property Name="Z" DisplayName="WeightB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0</gl:X>
                      <gl:Y>1</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="X" />
                      <Property Name="ColorG" Selector="Y" />
                      <Property Name="ColorB" Selector="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Analog</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>All this is necassary, because BonVision doesnt normalize the photodiode data!!!</Name>
                    <Text><![CDATA[All this is necassary, because BonVision doesnt normalize the photodiode data!!!]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>5.099385</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WindowTrigger">
                      <rx:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RenderFrame" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Skip">
                            <rx:Count>5</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SkipUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Average" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateGammaLookupRGB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertFromArray">
                      <dsp:Size>
                        <dsp:Width>0</dsp:Width>
                        <dsp:Height>0</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Scale>255</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="18" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source3" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="19" To="24" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RedRamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="WeightR" />
              <Property Name="WeightG" />
              <Property Name="WeightB" />
              <Property Name="Count" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BrightnessRamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <Count>52</Count>
                    <RangeMin>0</RangeMin>
                    <RangeMax>1</RangeMax>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1S</gl:DueTime>
                      <gl:Period>PT1S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                      <Property Name="Y" />
                      <Property Name="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>1</gl:X>
                      <gl:Y>1</gl:Y>
                      <gl:Z>1</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="WeightR" />
                    <Property Name="Y" DisplayName="WeightG" />
                    <Property Name="Z" DisplayName="WeightB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>1</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="X" />
                      <Property Name="ColorG" Selector="Y" />
                      <Property Name="ColorB" Selector="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Analog</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>All this is necassary, because BonVision doesnt normalize the photodiode data!!!</Name>
                    <Text><![CDATA[All this is necassary, because BonVision doesnt normalize the photodiode data!!!]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>5.099385</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WindowTrigger">
                      <rx:Count xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RenderFrame" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Skip">
                            <rx:Count>5</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SkipUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Average" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateGammaLookupRGB" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertFromArray">
                      <dsp:Size>
                        <dsp:Width>0</dsp:Width>
                        <dsp:Height>0</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Scale>255</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="18" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source3" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="19" To="24" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertToImage" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>gammalutRGB.bmp</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="18" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>