<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:p1="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>240</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>240</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Gray</ClearColor>
        <GammaLut>gammalut.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>20000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PhotoDiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Analog</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:Pin>0</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:ExpressionTransform">
          <p1:Expression>single(it)</p1:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DelaySubscription">
            <rx:DueTime>PT0.5S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Analog</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BrightnessRamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Step</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" />
                <Property Name="Y" />
                <Property Name="Z" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>1</gl:X>
                <gl:Y>1</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Step</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="WeightR" />
              <Property Name="Y" DisplayName="WeightG" />
              <Property Name="Z" DisplayName="WeightB" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>1</gl:X>
                <gl:Y>1</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="X" />
                <Property Name="ColorG" Selector="Y" />
                <Property Name="ColorB" Selector="Z" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>255</Count>
              <RangeMin>0</RangeMin>
              <RangeMax>1</RangeMax>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
                <gl:Period>PT0.02S</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Step</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="12" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="21" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>2</ExtentX>
        <ExtentY>2</ExtentY>
        <SpatialFrequency>10</SpatialFrequency>
        <TemporalFrequency>2</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>