<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Width" />
        <Property Name="Height" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetAspectRatio</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1920</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1080</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>AspectRatio</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(0.0 as X, 0.0 as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Down</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyState">
          <wie:Filter>ShiftKey</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(0.0 as X, (it ? 0.05 : 0.005) as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyState">
          <wie:Filter>ShiftKey</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(0.0 as X, (it ? -0.05 : -0.005) as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyState">
          <wie:Filter>ShiftKey</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new((it ? -0.05 : -0.005) as X, 0.0 as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyState">
          <wie:Filter>ShiftKey</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new((it ? 0.05 : 0.005) as X, 0.0 as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Math.Max(-1.0, Math.Min(1.0, Accumulation.X + Value.X)) as X, Math.Max(-1.0, Math.Min(1.0, Accumulation.Y + Value.Y)) as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CrosshairPosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CrosshairPosition</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MultiplyByAspectRatio</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AspectRatio</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="Item1" />
          <Property Name="LocationY" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.08</ExtentX>
        <ExtentY>0.003</ExtentY>
        <LocationX>-0.622222245</LocationX>
        <LocationY>-0.12</LocationY>
        <Layer>-1</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.003</ExtentX>
        <ExtentY>0.08</ExtentY>
        <LocationX>-0.622222245</LocationX>
        <LocationY>-0.12</LocationY>
        <Layer>-1</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SaveEvent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Sender.Size</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="VSpan" />
        <Property Name="HSubdiv" />
        <Property Name="VSubdiv" />
        <Property Name="HSpan" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateGrid</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="VSpan" />
              <Property Name="Y" DisplayName="HSubdiv" />
              <Property Name="Z" DisplayName="VSubdiv" />
              <Property Name="W" DisplayName="HSpan" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector4">
                <gl:X>105</gl:X>
                <gl:Y>6</gl:Y>
                <gl:Z>2</gl:Z>
                <gl:W>270</gl:W>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.W as HSpan,
Item1.X as VSpan,
Item1.Y as HSubdiv,
Item1.Z as VSubdiv,
Item2 as ScreenSize)</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
ScreenSize.Width as Width,
ScreenSize.Height as Height,
HSubdiv + 1 as HNodes,
VSubdiv + 1 as VNodes,
HSpan / HSubdiv as HAngleStep,
VSpan / VSubdiv as VAngleStep,
ScreenSize.Width * (HSpan / HSubdiv / HSpan) as HStep,
ScreenSize.Height * (VSpan / VSubdiv / VSpan) as VStep)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>GridSpec</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GridSpec</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VNodes</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VStep</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HNodes</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>7</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HStep</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item2" />
                      <Property Name="Y" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint">
                      <cv:X>1920</cv:X>
                      <cv:Y>1080</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>NodeArray</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VNodes</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VAngleStep</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HNodes</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>7</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridSpec</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HAngleStep</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item2" />
                      <Property Name="Y" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint">
                      <cv:X>270</cv:X>
                      <cv:Y>105</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>AngleArray</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source5" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Back</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CrosshairPosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ClickCounter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Accumulation,Value</Selector>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NodeArray</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Max(0,Math.Min(Item1,Item2.Length+1))</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ClickCounter</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Advance</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NodeArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="LessThanOrEqual" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawGrid</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>NodeArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GridSpec</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Size" Selector="Width,Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:CreateCanvas">
                <drw:Size>
                  <drw:Width>2000</drw:Width>
                  <drw:Height>1500</drw:Height>
                </drw:Size>
                <drw:Depth>U8</drw:Depth>
                <drw:Channels>3</drw:Channels>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>0</drw:Val1>
                  <drw:Val2>0</drw:Val2>
                  <drw:Val3>0</drw:Val3>
                </drw:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Center" Selector="Value.X,Value.Y" />
                    </PropertyMappings>
                    <Selector>Accumulation</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>1920</drw:X>
                        <drw:Y>1080</drw:Y>
                      </drw:Center>
                      <drw:Radius>20</drw:Radius>
                      <drw:Color>
                        <drw:Val0>255</drw:Val0>
                        <drw:Val1>255</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>-1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NodeArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 &lt; Item2.Length ?
new(Item2[Item1].X as X, Item2[Item1].Y as Y) :
new(-1000 as X, -1000 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint">
                <cv:X>-1000</cv:X>
                <cv:Y>-1000</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Center" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>-1000</drw:X>
                  <drw:Y>-1000</drw:Y>
                </drw:Center>
                <drw:Radius>25</drw:Radius>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>0</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>-1</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:DrawCanvas" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Create</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NodeArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="LessThanOrEqual" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateDot</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawClick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-180</Left>
              <Right>180</Right>
              <Bottom>-90</Bottom>
              <Top>90</Top>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawClick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Item2.X" />
                <Property Name="LocationY" Selector="Item2.Y" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <Diameter>0.01</Diameter>
              <LocationX>-0.35</LocationX>
              <LocationY>-0.12</LocationY>
              <Layer>0</Layer>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawClick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SaveEvent</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClickCounter</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawClick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="22" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SaveEvent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Save2CSV</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AngleArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>BonVision_MeshMap.csv</io:FileName>
              <io:ListSeparator />
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Item1.X,Item1.Y,Item2.X,Item2.Y</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="20" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="20" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="20" Label="Source3" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="20" Label="Source4" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source5" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="30" Label="Source1" />
      <Edge From="24" To="31" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="29" To="31" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="45" Label="Source2" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="48" To="54" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="52" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="58" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source2" />
      <Edge From="58" To="60" Label="Source1" />
      <Edge From="59" To="60" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>