<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-135</Left>
        <Right>135</Right>
        <Bottom>-22.5</Bottom>
        <Top>82.5</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.MeshMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <FileName>C:\RigConfigs\MeshMap.csv</FileName>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DrawStimuli</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Timer">
            <gl:DueTime>PT0S</gl:DueTime>
            <gl:Period>PT0.05S</gl:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Mod">
          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
            <Value>200</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Subtract">
          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
            <Value>100</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Multiply">
          <Operand xsi:type="IntProperty">
            <Value>1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="LocationX" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
          <LocationX>10</LocationX>
          <LocationY>60</LocationY>
          <Layer>0</Layer>
          <ExtentX>25</ExtentX>
          <ExtentY>25</ExtentY>
          <SpatialFrequency>0.0666666</SpatialFrequency>
          <TemporalFrequency>0</TemporalFrequency>
          <Phase>90</Phase>
          <Angle>0</Angle>
          <SquareWave>false</SquareWave>
          <Contrast>1</Contrast>
          <DutyCycle xsi:nil="true" />
          <Radius>1</Radius>
          <Aperture>1</Aperture>
          <Opacity>1</Opacity>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>6</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>nSubdivisions</Name>
        <Text><![CDATA[nSubdivisions]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>4</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="NumberColumns" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>4</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="NumberRows" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>UpperDeg</Name>
        <Text><![CDATA[UpperDeg]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>82.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>LowerDeg</Name>
        <Text><![CDATA[LowerDeg]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-22.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Divide">
        <Operand xsi:type="FloatProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <ExtentX>270</ExtentX>
        <ExtentY>105</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>30</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <NumberColumns>24</NumberColumns>
        <NumberRows>16</NumberRows>
        <Phase>0</Phase>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="13" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="35" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="22" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="35" Label="Source2" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="35" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="35" Label="Source4" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source5" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>