<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GreenDome2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RigConfigs">
          <p1:MachineName>GREEN-DOME-1</p1:MachineName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigConfigs</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StepperDriver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigConfigs</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="StepperDriver1PortName" Selector="COMPortStepperDriver1" />
                <Property Name="StepperDriver2PortName" Selector="COMPortStepperDriver2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitializeStepperDrivers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>StepperDriver1Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" DisplayName="StepperDriver1PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM4</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StepperDriver1Events</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>StepperDriver2Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" DisplayName="StepperDriver2PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM5</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StepperDriver2Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Declarations</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>SteppersZEROed</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Int32,sys:Int32,sys:Int32,sys:Int32)">
                    <rx:Name>StepperPositionCommand</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Int32,sys:Int32,sys:Int32,sys:Int32)">
                    <rx:Name>StepperPosition_BothOut</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Int32,sys:Int32,sys:Int32,sys:Int32)">
                    <rx:Name>StepperPosition_BothIn</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StepperPosition_HOME</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Annotation">
                      <Name>Init by Moving to ZERO</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:BehaviorSubject">
                      <Name>StepperPositionCommand</Name>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source5" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitialiseStepperDriverSettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriver1Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>20</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="rx:Defer">
                    <Name>Initialize StepperDriver1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInterlockEnabledPayload">
                            <p2:InterlockEnabled>Open</p2:InterlockEnabled>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableDriverPayload">
                            <p2:EnableDriver>Motor0 Motor1 Motor2</p2:EnableDriver>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0MaximumRunCurrentPayload">
                            <p2:Motor0MaximumRunCurrent>0.55</p2:Motor0MaximumRunCurrent>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1MaximumRunCurrentPayload">
                            <p2:Motor1MaximumRunCurrent>0.55</p2:Motor1MaximumRunCurrent>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor2MaximumRunCurrentPayload">
                            <p2:Motor2MaximumRunCurrent>0.55</p2:Motor2MaximumRunCurrent>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0MicrostepResolutionPayload">
                            <p2:Motor0MicrostepResolution>Microstep8</p2:Motor0MicrostepResolution>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1MicrostepResolutionPayload">
                            <p2:Motor1MicrostepResolution>Microstep8</p2:Motor1MicrostepResolution>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor2MicrostepResolutionPayload">
                            <p2:Motor2MicrostepResolution>Microstep8</p2:Motor2MicrostepResolution>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableEncodersPayload">
                            <p2:EnableEncoders>Encoder0 Encoder1 Encoder2</p2:EnableEncoders>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateResetEncodersPayload">
                            <p2:ResetEncoders>Encoder0 Encoder1 Encoder2</p2:ResetEncoders>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEncoderModePayload">
                            <p2:EncoderMode>Position</p2:EncoderMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEncoderSamplingRatePayload">
                            <p2:EncoderSamplingRate>Rate500Hz</p2:EncoderSamplingRate>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateAccumulatedStepsSamplingRatePayload">
                            <p2:AccumulatedStepsSamplingRate>Rate100Hz</p2:AccumulatedStepsSamplingRate>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableDigitalInputsPayload">
                            <p2:EnableDigitalInputs>Input0 Input1 Input2</p2:EnableDigitalInputs>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInput0OpModePayload">
                            <p2:Input0OpMode>StopMotor0OnFalling</p2:Input0OpMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInput1OpModePayload">
                            <p2:Input1OpMode>StopMotor1OnFalling</p2:Input1OpMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInput2OpModePayload">
                            <p2:Input2OpMode>StopMotor2OnFalling</p2:Input2OpMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0StepIntervalPayload">
                            <p2:Motor0StepInterval>200</p2:Motor0StepInterval>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1StepIntervalPayload">
                            <p2:Motor1StepInterval>200</p2:Motor1StepInterval>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor2StepIntervalPayload">
                            <p2:Motor2StepInterval>200</p2:Motor2StepInterval>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StepperDriver1Commands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="25" Label="Source1" />
                        <Edge From="2" To="25" Label="Source2" />
                        <Edge From="3" To="25" Label="Source3" />
                        <Edge From="4" To="25" Label="Source4" />
                        <Edge From="5" To="25" Label="Source5" />
                        <Edge From="6" To="25" Label="Source6" />
                        <Edge From="7" To="25" Label="Source7" />
                        <Edge From="8" To="25" Label="Source8" />
                        <Edge From="9" To="25" Label="Source9" />
                        <Edge From="10" To="25" Label="Source10" />
                        <Edge From="11" To="25" Label="Source11" />
                        <Edge From="12" To="25" Label="Source12" />
                        <Edge From="13" To="25" Label="Source13" />
                        <Edge From="14" To="25" Label="Source14" />
                        <Edge From="15" To="25" Label="Source15" />
                        <Edge From="16" To="25" Label="Source16" />
                        <Edge From="17" To="25" Label="Source17" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="18" To="21" Label="Source1" />
                        <Edge From="18" To="23" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="25" Label="Source18" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="25" Label="Source19" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source20" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriver2Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>20</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="rx:Defer">
                    <Name>Initialize StepperDriver2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInterlockEnabledPayload">
                            <p2:InterlockEnabled>Open</p2:InterlockEnabled>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableDriverPayload">
                            <p2:EnableDriver>Motor0 Motor1 Motor2</p2:EnableDriver>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0MaximumRunCurrentPayload">
                            <p2:Motor0MaximumRunCurrent>0.55</p2:Motor0MaximumRunCurrent>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1MaximumRunCurrentPayload">
                            <p2:Motor1MaximumRunCurrent>0.55</p2:Motor1MaximumRunCurrent>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0MicrostepResolutionPayload">
                            <p2:Motor0MicrostepResolution>Microstep8</p2:Motor0MicrostepResolution>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1MicrostepResolutionPayload">
                            <p2:Motor1MicrostepResolution>Microstep8</p2:Motor1MicrostepResolution>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableEncodersPayload">
                            <p2:EnableEncoders>Encoder0 Encoder1</p2:EnableEncoders>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateResetEncodersPayload">
                            <p2:ResetEncoders>Encoder0 Encoder1</p2:ResetEncoders>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEncoderModePayload">
                            <p2:EncoderMode>Position</p2:EncoderMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEncoderSamplingRatePayload">
                            <p2:EncoderSamplingRate>Rate500Hz</p2:EncoderSamplingRate>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateAccumulatedStepsSamplingRatePayload">
                            <p2:AccumulatedStepsSamplingRate>Rate100Hz</p2:AccumulatedStepsSamplingRate>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateEnableDigitalInputsPayload">
                            <p2:EnableDigitalInputs>Input0 Input1</p2:EnableDigitalInputs>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInput0OpModePayload">
                            <p2:Input0OpMode>StopMotor0OnFalling</p2:Input0OpMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateInput1OpModePayload">
                            <p2:Input1OpMode>StopMotor1OnFalling</p2:Input1OpMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor0StepIntervalPayload">
                            <p2:Motor0StepInterval>200</p2:Motor0StepInterval>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="p2:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p2:CreateMotor1StepIntervalPayload">
                            <p2:Motor1StepInterval>200</p2:Motor1StepInterval>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StepperDriver2Commands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="20" Label="Source1" />
                        <Edge From="2" To="20" Label="Source2" />
                        <Edge From="3" To="20" Label="Source3" />
                        <Edge From="4" To="20" Label="Source4" />
                        <Edge From="5" To="20" Label="Source5" />
                        <Edge From="6" To="20" Label="Source6" />
                        <Edge From="7" To="20" Label="Source7" />
                        <Edge From="8" To="20" Label="Source8" />
                        <Edge From="9" To="20" Label="Source9" />
                        <Edge From="10" To="20" Label="Source10" />
                        <Edge From="11" To="20" Label="Source11" />
                        <Edge From="12" To="20" Label="Source12" />
                        <Edge From="13" To="20" Label="Source13" />
                        <Edge From="14" To="20" Label="Source14" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="15" To="18" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source15" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source16" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StepperDriversInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Ensure I get the initial states</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Read</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateDigitalInputStatePayload">
                      <p2:DigitalInputState>None</p2:DigitalInputState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriver1Commands</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriver2Commands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="14" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ReadSwitchStates</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriver1Events</Name>
                  </Expression>
                  <Expression xsi:type="p2:Parse">
                    <harp:Register xsi:type="p2:DigitalInputState" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnpackSwitchTriggers" />
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>_Motor0_switchState</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>_Motor1_switchState</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>_Motor2_switchState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriver2Events</Name>
                  </Expression>
                  <Expression xsi:type="p2:Parse">
                    <harp:Register xsi:type="p2:DigitalInputState" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UnpackSwitchTriggers" />
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>_Motor3_switchState</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>_Motor4_switchState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="14" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ZEROMotors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
                    <SubjectName_switchState>_Motor0_switchState</SubjectName_switchState>
                    <MotorID>0</MotorID>
                    <SubjectName_StepperDriver>StepperDriver1Commands</SubjectName_StepperDriver>
                    <SubjectName_switchState_again>_Motor0_switchState</SubjectName_switchState_again>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
                    <SubjectName_switchState>_Motor1_switchState</SubjectName_switchState>
                    <MotorID>1</MotorID>
                    <SubjectName_StepperDriver>StepperDriver1Commands</SubjectName_StepperDriver>
                    <SubjectName_switchState_again>_Motor1_switchState</SubjectName_switchState_again>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
                    <SubjectName_switchState>_Motor2_switchState</SubjectName_switchState>
                    <MotorID>2</MotorID>
                    <SubjectName_StepperDriver>StepperDriver1Commands</SubjectName_StepperDriver>
                    <SubjectName_switchState_again>_Motor2_switchState</SubjectName_switchState_again>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
                    <SubjectName_switchState>_Motor3_switchState</SubjectName_switchState>
                    <MotorID>0</MotorID>
                    <SubjectName_StepperDriver>StepperDriver2Commands</SubjectName_StepperDriver>
                    <SubjectName_switchState_again>_Motor3_switchState</SubjectName_switchState_again>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
                    <SubjectName_switchState>_Motor4_switchState</SubjectName_switchState>
                    <MotorID>1</MotorID>
                    <SubjectName_StepperDriver>StepperDriver2Commands</SubjectName_StepperDriver>
                    <SubjectName_switchState_again>_Motor4_switchState</SubjectName_switchState_again>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SteppersZEROed</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="rx:SelectMany">
                    <Name>SendSpoutInCommand</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>MoveToInPosition</Name>
                          <Text><![CDATA[MoveToInPosition]]></Text>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StepperPosition_BothIn</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StepperPositionCommand</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Sample" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Annotation">
                      <Name>Need to give motors time to reach ZERO before moving again</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
                      <Name>SendSpoutInCommand</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\ZEROingMotors.bonsai">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="5" Label="Source2" />
                  <Edge From="2" To="5" Label="Source3" />
                  <Edge From="3" To="5" Label="Source4" />
                  <Edge From="4" To="5" Label="Source5" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="23" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="22" Label="Source2" />
                  <Edge From="19" To="22" Label="Source3" />
                  <Edge From="20" To="22" Label="Source4" />
                  <Edge From="21" To="22" Label="Source5" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MoveMotors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperPositionCommand</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\MoveStepperMotors.bonsai" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GUI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Left</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Left</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Right</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Right</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="Annotation">
              <Name>Motor1 UP</Name>
              <Text><![CDATA[Motor1 UP]]></Text>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Left UP</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↑</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor4_UP</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>StepperPosition_BothIn</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0},{1},{2},{3},{4};</Format>
              <Selector>Item1,Item2,Item3,Item4,Item5</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>4250,6040,4610,6900,0;</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Right UP</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↑</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor5_UP</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="Annotation">
              <Name>Motor1 DOWN</Name>
              <Text><![CDATA[Motor1 DOWN]]></Text>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Left DOWN</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↓</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor4_DOWN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Right DOWN</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↓</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor5_DOWN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Left FRONT</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↙</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor2_UP</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Left BACK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↗</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor2_DOWN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Right BACK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↖</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor3_DOWN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Right FRONT</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>↘</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor3_UP</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Base LEFT</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>←</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor1_UP</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Base RIGHT</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>→</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Motor1_DOWN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>HOME</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>ZERO</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>GUICallbackStepperHOME</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>IN</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>IN</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>GUICallbackStepperIN</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>OUT</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>OUT</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>GUICallbackStepperOUT</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>StepSize</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>StepSize</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>BLANK</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>StepperStepSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>StepSize</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>150</gui:Text>
              <gui:Multiline>false</gui:Multiline>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>5</gui:ColumnCount>
              <gui:RowCount>7</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="4" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="3" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="3" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="4" RowSpan="1" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Spout Position</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor0_switchState</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>False</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor1_switchState</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>False</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor2_switchState</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>False</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor3_switchState</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>False</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>_Motor4_switchState</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>False</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>5</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>States</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>GUI</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="1" RowSpan="2" />
                <gui:CellSpan ColumnSpan="1" RowSpan="2" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperStepSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>150</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StepperStepSize</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="72" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="72" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="72" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="72" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="72" Label="Source5" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="72" Label="Source6" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="72" Label="Source7" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="72" Label="Source8" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="72" Label="Source9" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="72" Label="Source10" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="72" Label="Source11" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="72" Label="Source12" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="72" Label="Source13" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="72" Label="Source14" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="72" Label="Source15" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="72" Label="Source16" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="72" Label="Source17" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="72" Label="Source18" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="72" Label="Source19" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="72" Label="Source20" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="72" Label="Source21" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="72" Label="Source22" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="72" Label="Source23" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="72" Label="Source24" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="70" To="71" Label="Source1" />
            <Edge From="70" To="106" Label="Source1" />
            <Edge From="71" To="72" Label="Source25" />
            <Edge From="72" To="73" Label="Source1" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="105" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="80" To="101" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="101" Label="Source2" />
            <Edge From="86" To="87" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="90" To="101" Label="Source3" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="92" To="93" Label="Source1" />
            <Edge From="93" To="94" Label="Source1" />
            <Edge From="94" To="95" Label="Source1" />
            <Edge From="95" To="101" Label="Source4" />
            <Edge From="96" To="97" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="98" To="99" Label="Source1" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="100" To="101" Label="Source5" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="102" To="103" Label="Source1" />
            <Edge From="103" To="104" Label="Source1" />
            <Edge From="104" To="105" Label="Source2" />
            <Edge From="106" To="107" Label="Source1" />
            <Edge From="108" To="109" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StepperMotorGUICallbacks</Name>
        <Description>StepperMotorGUICallbacks</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>Update Motor IN position data</Name>
              <Text><![CDATA[Update Motor IN position data]]></Text>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Internal Position Update</Name>
                <Description>Internal Position Update</Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>ZERO, IN, OUT commands</Name>
              <Text><![CDATA[ZERO, IN, OUT commands]]></Text>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Position Callbacks</Name>
                <Description>Position Callbacks. Overall: ZERO, IN, OUT</Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Individual Motor Callbacks</Name>
              <Text><![CDATA[Individual Motor Callbacks]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor1_UP</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor0MoveRelativePayload">
                <p2:Motor0MoveRelative>500</p2:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor1_DOWN</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor0MoveRelativePayload">
                <p2:Motor0MoveRelative>-500</p2:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor2_UP</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor1MoveRelativePayload">
                <p2:Motor1MoveRelative>500</p2:Motor1MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor2_DOWN</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor1MoveRelativePayload">
                <p2:Motor1MoveRelative>-500</p2:Motor1MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor3_UP</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor2MoveRelativePayload">
                <p2:Motor2MoveRelative>500</p2:Motor2MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor3_DOWN</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor2MoveRelativePayload">
                <p2:Motor2MoveRelative>-500</p2:Motor2MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor4_UP</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor0MoveRelativePayload">
                <p2:Motor0MoveRelative>500</p2:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver2Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor4_DOWN</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor0MoveRelativePayload">
                <p2:Motor0MoveRelative>-500</p2:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver2Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor5_UP</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor1MoveRelativePayload">
                <p2:Motor1MoveRelative>500</p2:Motor1MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver2Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Motor5_DOWN</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMotor1MoveRelativePayload">
                <p2:Motor1MoveRelative>-500</p2:Motor1MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriver2Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>