<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:ZapitCommand">
        <rx:Name>ZapitCommands</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:ZapitReply">
        <rx:Name>ZapitReplies</rx:Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zapit.bonsai">
        <Host>127.0.0.1</Host>
        <Port>1488</Port>
        <ReceiveTimeout>5000</ReceiveTimeout>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateStartStimulus">
          <p1:ConditionNumber>1</p1:ConditionNumber>
          <p1:LaserOn>true</p1:LaserOn>
          <p1:HardwareTriggered>true</p1:HardwareTriggered>
          <p1:Logging>true</p1:Logging>
          <p1:StimDuration>1.5</p1:StimDuration>
          <p1:LaserPower>3</p1:LaserPower>
          <p1:StartDelay>0.2</p1:StartDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ZapitCommands</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai">
        <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
        <PortName>COM11</PortName>
        <DumpRegisters>true</DumpRegisters>
        <Heartbeat>Disabled</Heartbeat>
        <EventsSubjectName>BehaviorEvents</EventsSubjectName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PulseController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DO0 DO1 DO2</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the input &quot;commands&quot; Subject" Category="Subjects" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="OutputPulseEnable" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnablePulses</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="OutputPulseEnable" />
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>DO1 DO2 DO3</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO1" />
              <Property Name="PulseDO2" />
              <Property Name="PulseDO3" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PulseWidths</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PulseDO1" />
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO1Payload">
                      <beh:PulseDO1>500</beh:PulseDO1>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PulseDO2" />
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
                      <beh:PulseDO2>500</beh:PulseDO2>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PulseDO3" />
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO3Payload">
                      <beh:PulseDO3>5000</beh:PulseDO3>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="3" To="10" Label="Source2" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the output &quot;Events&quot; Subject" Category="Subjects" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="TriggerPulseSubjectName" Description="The name of the subject to which pulse triggers should be sent. The value of the integer sent to this trigger will trigger a pulse on th corresponding DO line" Category="Subjects" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>TriggerPulse</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggerPulse</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO2</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggerPulse</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DO3</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="1" To="4" Label="Source3" />
            <Edge From="1" To="6" Label="Source3" />
            <Edge From="1" To="16" Label="Source2" />
            <Edge From="1" To="20" Label="Source2" />
            <Edge From="1" To="24" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="12" To="21" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey P Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>DO3</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton B Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateZapitQuery">
          <p1:Query>GetState</p1:Query>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ZapitCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>3</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TriggerPulse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel A B C Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateStopStimulus" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ZapitCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ZapitReplies</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
    CommandCode as command,
    Value as value,
    LaserOn as laserOn,
    IsError as isError,
    ServerDatenum as serverDatenum)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CsvWriter">
          <io:FileName>zapit-demo.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>true</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>