<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:UclOpenAvDomeTask;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:UclOpenAvDome;assembly=Extensions"
                 xmlns:uoc="clr-namespace:OpenRigs.Core;assembly=OpenRigs.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\config\task-zapit-test.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenAvDomeTaskLogic" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>TaskConfig</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadRigConfig</Name>
        <Description>Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="uoc:ResolveRigConfigDirectory">
                <uoc:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</uoc:ConfigRoot>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigConfigDirectory</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Core:ReadRigConfig.bonsai">
              <FileName>rig.yml</FileName>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p3:DeserializeFromYaml">
        <p3:Type xsi:type="TypeMapping" TypeArguments="p3:UclOpenAvDomeRig" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigConfigs</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BehaviorBoard</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:RigDevice">
          <p3:Name>BehaviorBoard-Main</p3:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>BehaviorBoard-Main</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:ZapitCommand">
        <rx:Name>ZapitCommands</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:ZapitReply">
        <rx:Name>ZapitReplies</rx:Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Zapit</Name>
        <Description>Connects to the Zapit optogenetics server only when the task YAML enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskConfig</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters.Optogenetics.Enabled</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OptogeneticsEnabled?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ConnectZapit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigConfigs</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Host" Selector="Zapit.Host" />
                      <Property Name="Port" Selector="Zapit.Port" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zapit.bonsai">
                    <Host>127.0.0.1</Host>
                    <Port>1488</Port>
                    <ReceiveTimeout>5000</ReceiveTimeout>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ZapitReplies</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigConfigs</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>ArmedForTtl?</Name>
                    <Description>Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item1.CommandCode == 1 &amp;&amp; !Item1.IsError &amp;&amp; Item2.Zapit.HardwareTriggered</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Zapit.TriggerLine</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggerPulse</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskConfig</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Correct</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:InitialiseTrial">
                <p2:trainingStageId>1</p2:trainingStageId>
                <p2:TrialType>-1</p2:TrialType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>settings</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Optogenetics</Name>
              <Text><![CDATA[Optogenetics]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>settings</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OptoTrial?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OptogeneticEnabled</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>settings</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConditionNumber" Selector="OptogeneticCondition" />
                <Property Name="StimDuration" Selector="OptogeneticDuration" />
                <Property Name="StartDelay" Selector="OptogeneticDelay" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigConfigs</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="HardwareTriggered" Selector="Zapit.HardwareTriggered" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateStartStimulus">
                <p2:ConditionNumber>2</p2:ConditionNumber>
                <p2:LaserOn>true</p2:LaserOn>
                <p2:HardwareTriggered>true</p2:HardwareTriggered>
                <p2:Logging>true</p2:Logging>
                <p2:StimDuration>1.5</p2:StimDuration>
                <p2:LaserPower>0</p2:LaserPower>
                <p2:StartDelay>0</p2:StartDelay>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ZapitCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>settings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>trialType,IsRepeat,OptogeneticEnabled,OptogeneticCondition,OptogeneticDuration,OptogeneticDelay</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteLine" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ZapitReplies</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerPulse</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>TTL on DO{0}</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorBoard-Main</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" Selector="Settings.PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BehaviorBoard</Name>
        <Description>The behavior board, so the TriggerPulse subject drives a real TTL on the DO line named in the rig YAML (zapit.triggerLine, usually DO3). Needs the board on the rig YAML port; on a PC without it the workflow fails at startup.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM11</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Enabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO3" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Devices:BehaviorBoard.PulseController.bonsai">
              <BehaviorCommandsSubjectName>BehaviorCommands</BehaviorCommandsSubjectName>
              <OutputPulseEnable>DO3</OutputPulseEnable>
              <PulseDO1>1</PulseDO1>
              <PulseDO2>1</PulseDO2>
              <PulseDO3>20</PulseDO3>
              <BehaviorEventsSubjectName>BehaviorEvents</BehaviorEventsSubjectName>
              <TriggerPulseSubjectName>TriggerPulse</TriggerPulseSubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ZapitReplies</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
    CommandCode as command,
    Value as value,
    LaserOn as laserOn,
    IsError as isError,
    ServerDatenum as serverDatenum)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CsvWriter">
          <io:FileName>zapit-demo.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>true</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorBoard-Main</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Settings.PulseController.Outputs.DO3</Selector>
      </Expression>
      <Expression xsi:type="p3:MatchPulseOutput">
        <p3:Type xsi:type="TypeMapping" TypeArguments="p3:FixedPulse" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PulseDO3" Selector="PulseWidthMs" />
        </PropertyMappings>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="24" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>