WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice)
-> GroupWorkflow RigSetup
    GroupWorkflow ReadRigConfig
      Description: Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.
      Workflow
        OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
        -> AsyncSubject RigConfigDirectory
        -> IncludeWorkflow(Path=OpenRigs.Core:ReadRigConfig.bonsai, FileName=rig.yml)
        -> WorkflowOutput
    -> UclOpenAvDome.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDome.UclOpenAvDomeRig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=BehaviorBoard)
    -> UclOpenAvDome.RigDevice(Name=BehaviorBoard-Main)
    -> AsyncSubject BehaviorBoard-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=TimestampGeneratorGen3)
    -> UclOpenAvDome.RigDevice(Name=TimestampGeneratorGen3-Main)
    -> AsyncSubject TimestampGeneratorGen3-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LickSpoutStage)
    -> UclOpenAvDome.RigDevice(Name=LickSpoutStage-Main)
    -> AsyncSubject LickSpoutStage-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenAvDome.RigDevice(Name=LicketySplit-Left)
    -> AsyncSubject LicketySplit-Left

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenAvDome.RigDevice(Name=LicketySplit-Right)
    -> AsyncSubject LicketySplit-Right

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Face)
    -> AsyncSubject Camera-Face

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Pupil)
    -> AsyncSubject Camera-Pupil

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenAvDome.RigDevice(Name=Camera-Body)
    -> AsyncSubject Camera-Body

    GroupWorkflow HardwareDevices
        SubscribeSubject TimestampGeneratorGen3-Main
        -> PropertyMapping(PortName(Selector=Settings.PortName), TimerFrequency(Selector=Settings.TimerFrequency))
        -> IncludeWorkflow
          Path=OpenRigs.Devices:TimestampGeneratorGen3.bonsai
          CommandsSubjectName=TimestampGeneratorCommands
          PortName=COM16
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=ClockSynchronizerEvents
          TimerFrequency=Timer1000Hz

        SubscribeSubject ClockSynchronizerEvents
        -> PublishSubject TimestampGeneratorGen3-Main.Data

        BehaviorSubject<Bonsai.Harp.HarpMessage> TimestampGeneratorGen3-Main.Commands

        SubscribeSubject TimestampGeneratorGen3-Main.Commands
        -> MulticastSubject TimestampGeneratorCommands

        SubscribeSubject BehaviorBoard-Main
        -> PropertyMapping => #9
          PortName(Selector=Settings.PortName)
          CountsPerRev(Selector=Settings.RunningWheel.CountsPerRev)
          WheelDiameterMm(Selector=Settings.RunningWheel.WheelDiameterMm)
          EnableTrigger0(Selector=Settings.CameraTriggerController.Trigger0Enabled)
          EnableTrigger1(Selector=Settings.CameraTriggerController.Trigger1Enabled)
          Trigger0Frequency(Selector=Settings.CameraTriggerController.Trigger0Frequency)
          Trigger1Frequency(Selector=Settings.CameraTriggerController.Trigger1Frequency)
          OutputPulseEnable(Selector=Settings.PulseController.OutputPulseEnable)
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO3)
        -> UclOpenAvDome.MatchPulseOutput(Type=TypeMapping<UclOpenAvDome.FixedPulse>)
        -> PropertyMapping(PulseDO3(Selector=PulseWidthMs)) => #18
        #9, #18 -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorBoard-Main.Commands
              PortName=COM11
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorBoard-Main.Data

            ExternalizedMapping(CountsPerRev, WheelDiameterMm)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.RunningWheel.bonsai
              CommandsSubjectName=BehaviorBoard-Main.Commands
              EventsSubjectName=BehaviorBoard-Main.Data
              CountsPerRev=4096
              WheelDiameterMm=170
              WheelDistanceSubjectName=WheelDistanceCm

            ExternalizedMapping(PulseDO1, PulseDO2, PulseDO3, OutputPulseEnable)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=40
              PulseDO2=50
              PulseDO3=3000
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              TriggerPulseSubjectName=TriggerPulse
              TriggerCalibratedPulseSubjectName=TriggerCalibratedPulse

            BehaviorSubject<System.Tuple(System.Int32,System.Double)> DeliverRewardCommand
            -> IncludeWorkflow(Path=Extensions\DeliverReward.bonsai)

            ExternalizedMapping(EnableTrigger0, EnableTrigger1, Trigger0Frequency, Trigger1Frequency)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.CameraTriggerController.bonsai
              EnableTrigger0=true
              EnableTrigger1=false
              Trigger0Frequency=50
              Trigger1Frequency=50
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              Camera0TriggerEventsSubjectName=Camera0TriggerEvents
              Camera1TriggerEventsSubjectName=Camera1TriggerEvents

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT2S)
            -> MulticastSubject StartCameras

        GroupWorkflow LicketySplits
            SubscribeSubject LicketySplit-Right
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Right.Commands
              PortName=COM13
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Right.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateRight

            SubscribeSubject LicketySplit-Left
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Left.Commands
              PortName=COM15
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Left.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateLeft

        GroupWorkflow Cameras
            SubscribeSubject Camera-Face
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366326
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Face.Data

            SubscribeSubject Camera-Body
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366318
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Body.Data

            SubscribeSubject Camera-Pupil
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366328
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Pupil.Data

        GroupWorkflow StepperDriver
            SubscribeSubject LickSpoutStage-Main
            -> PropertyMapping(StepperDriver1PortName(Selector=Settings.DriverA.PortName), StepperDriver2PortName(Selector=Settings.DriverB.PortName))
            -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_LeftIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_RightIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPositionCommand

                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                IntProperty(Value=0) => #7
                IntProperty(Value=0) => #8
                IntProperty(Value=0) => #9
                #5, #6, #7, #8, #9 -> Zip => #10
                -> BehaviorSubject StepperPosition_HOME
                #10 -> Disable Delay(DueTime=PT2.5S) => #12
                Disable Annotation "Init by Moving to ZERO"(Text="Init by Moving to ZERO") => #13
                #12, #13 -> Disable BehaviorSubject StepperPositionCommand

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    Disable IntProperty(Value=100) => #18
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #20
                    #18 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #22
                    #18 -> Disable PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    Disable IntProperty(Value=100) => #15
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #17
                    #15 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip => #5
                -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2) => #6
                -> BooleanProperty(Value=true)
                -> MulticastSubject SteppersZEROed
                -> SelectMany SendSpoutInCommand
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                -> WorkflowOutput
                #0 -> StringProperty(Value=Motor0) => #11
                #1 -> StringProperty(Value=Motor1) => #12
                #2 -> StringProperty(Value=Motor2) => #13
                #3 -> StringProperty(Value=Motor3) => #14
                #4 -> StringProperty(Value=Motor4) => #15
                #5 -> StringProperty(Value=AllZeroed) => #16
                #6 -> StringProperty(Value=HarpDelay) => #17
                SubscribeSubject StepperDriversInitialized
                -> Take(Count=1)
                -> StringProperty(Value=StepperDriversInitialized) => #20
                SubscribeSubject Timestamp
                -> Take(Count=1)
                -> StringProperty(Value=Timestamp) => #23
                #20, #23, #11, #12, #13, #14, #15, #16, #17 -> Merge
                -> StartupWatchdog
                  Expected="StepperDriversInitialized, Timestamp, Motor0, Motor1, Motor2, Motor3, Motor4, AllZeroed, HarpDelay"
                  TimeoutSeconds=60
                  What="Zeroing the spout steppers (needed for Ready)"

            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai) => #8
            SubscribeSubject SteppersZEROed
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #10 -> SubscribeWhen

        GroupWorkflow Zapit
          Description: Connects to the Zapit optogenetics server only when the task YAML enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies.
          Workflow
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Optogenetics.Enabled)
            -> Take(Count=1)
            -> Condition OptogeneticsEnabled?
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany ConnectZapit
                WorkflowInput Source1

                SubscribeSubject RigConfigs
                -> PropertyMapping(Host(Selector=Zapit.Host), Port(Selector=Zapit.Port))
                -> IncludeWorkflow(Path=Extensions\Zapit.bonsai, Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
                -> WorkflowOutput

                Disable SubscribeSubject ZapitReplies => #5
                Disable SubscribeSubject RigConfigs => #6
                #5, #6 -> Disable WithLatestFrom
                -> Disable Condition ArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.")
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: Item1.CommandCode == 1 && !Item1.IsError && Item2.Zapit.HardwareTriggered
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2.Zapit.TriggerLine)
                -> Disable MulticastSubject TriggerPulse

    SubscribeSubject RigConfigs
    -> PropertyMapping(FileName(Selector=ProjectionCalibration.MeshMapPath), GammaLut(Selector=ProjectionCalibration.GammaLutPath)) => #38
    ExternalizedMapping(DisplayDevice) => #39
    #38, #39 -> GroupWorkflow BonvisionResources
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv) => #8
        ExternalizedMapping(GammaLut) => #9
        #8, #9 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)
    -> DisposeOnRenderThread(TimeoutSeconds=2)

    GroupWorkflow RewardCounter
        SubscribeSubject RewardDelivered
        -> MemberSelector(Selector=DeliveredUl)
        -> SelectMany IncrementWaterDelivered(Description="Adds each reward's delivered volume (nominal 2 ul per pulse on a fixed line) to WaterDelivered.")
            WorkflowInput Source1 => #0
            SubscribeSubject WaterDelivered => #1
            #1, #0 -> Zip
            -> Add
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject WaterDelivered

    Disable GroupWorkflow LEDs
        SubscribeSubject StartAuditoryStimulus
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
        -> MulticastSubject BehaviorBoard-Main.Commands

        SubscribeSubject TrialSuccess
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
        -> MulticastSubject BehaviorBoard-Main.Commands

        SubscribeSubject BehaviorBoard-Main.Data
        -> Take(Count=1)
        -> Delay(DueTime=PT5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
        -> MulticastSubject BehaviorBoard-Main.Commands

    GroupWorkflow Audio
        GroupWorkflow LoadAudioFiles
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.AudioStimulus.StimulusPath)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\filtered_pink_pulse_train.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformPinkNoise

            SubscribeSubject waveformPinkNoise
            -> MemberSelector(Selector=Cols)
            -> PropertyMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=72000, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)
            -> Take(Count=1)
            -> AsyncSubject PinkNoiseSync

            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Path)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformErrorSound

        ExternalizedMapping(X-Speaker1, Y-Speaker1, Z-Speaker1, X-Speaker2, Y-Speaker2, Z-Speaker2, X-Speaker3, Y-Speaker3, Z-Speaker3)
        -> GroupWorkflow SpeakerLocations
            ExternalizedMapping(X(DisplayName=X-Speaker1), Y(DisplayName=Y-Speaker1), Z(DisplayName=Z-Speaker1))
            -> Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #2
            ExternalizedMapping(X(DisplayName=X-Speaker2), Y(DisplayName=Y-Speaker2), Z(DisplayName=Z-Speaker2))
            -> Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #5
            ExternalizedMapping(X(DisplayName=X-Speaker3), Y(DisplayName=Y-Speaker3), Z(DisplayName=Z-Speaker3))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #8
            #2, #5, #8 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        GroupWorkflow Mixer
            GroupWorkflow MixerDevice => #0
                Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
                -> Bonsai.Mixer.StartMixer
                -> BehaviorSubject Mixer

                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerStimSource

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerStimSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #7
                SubscribeSubject MixerStimSource => #8
                #7, #8 -> Bonsai.Mixer.AppendBuffer

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerErrorSoundSource

                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerErrorSoundSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBufferErrorSound => #14
                SubscribeSubject MixerErrorSoundSource => #15
                #14, #15 -> Bonsai.Mixer.AppendBuffer
            Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #1
            #0, #1 -> DelaySubscription(DueTime=PT3S)
            -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=0)
        -> BehaviorSubject ActiveSoundChannels

        BehaviorSubject<System.Boolean> StartAuditoryStimulus
        -> SelectMany PlayStim
            SubscribeSubject waveformPinkNoise
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #8
            #4, #8 -> ChannelActivation(Channels(int=2), Gain(double=1)) => #9
            SubscribeSubject PinkNoiseSync
            -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels(int=31), Gain(double=0.2)) => #12
            #9, #12 -> Zip
            -> Add
            -> MulticastSubject MixerBuffer

        BehaviorSubject<System.Boolean> StartAuditoryErrorSound
        -> Condition ErrorSoundEnabled?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany PlayErrorSound
            SubscribeSubject waveformErrorSound
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Channel)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Gain)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Gain) => #14
            #4, #9, #14 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBufferErrorSound

    GroupWorkflow RewardLines
      Description: Builds the left (DO1) and right (DO2) reward lines from the rig configuration: a calibrated line reads and fits its valve calibration from the rig configuration directory, a fixed line keeps its width. The Logging group snapshots each calibration read into the session folder.
      Workflow
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO1) => #1
        SubscribeSubject RigConfigDirectory => #2
        #1, #2 -> Zip
        -> LoadRewardLine(Line=1)
        -> Take(Count=1)
        -> AsyncSubject RewardLineLeft

        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO2) => #8
        SubscribeSubject RigConfigDirectory => #9
        #8, #9 -> Zip
        -> LoadRewardLine(Line=2)
        -> Take(Count=1)
        -> AsyncSubject RewardLineRight

GroupWorkflow Declarations
    BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking
    BehaviorSubject<System.String> TrialSuccess

    IntProperty(Value=0)
    -> BehaviorSubject TrialCount

    DoubleProperty(Value=0)
    -> BehaviorSubject WaterDelivered

    BehaviorSubject<System.Boolean> SteppersZEROed
    BehaviorSubject<System.Int32> DecisionVariable
    BehaviorSubject<System.Double> visualAzimuthStart
    BehaviorSubject<System.Double> visualAzimuth
    BehaviorSubject<ZapitCommand> ZapitCommands
    BehaviorSubject<ZapitReply> ZapitReplies

ExternalizedMapping(SubjectId, SessionId)
-> GroupWorkflow Initialization
  Description: The session controller (OpenRigs.Control, SessionControl), in place of the Bonsai.Gui window: SubjectId (the mouse) and SessionId from this node's properties or the command line (--property:SubjectId=...), the settings a controller may change until Go (TrainingStage, TaskFile, RewardSizeUl, ItiMin, ItiMax, Zapit, StepSize) and the commands it may send while ready or recording, over TCP 5561 (the rig agent relays). The workflow starts into ready mode: devices connected, spouts zeroed and at this mouse's positions, live view streaming, nothing recorded, and reports Ready once the steppers are zeroed. Go publishes RunSettings (SubjectId, SessionId, TrainingStage), which logging and the trial loop wait for, sets StartSession true (the old Start button), and names the task file (TaskFilePath). SubjectId is also published at Start, for this mouse's spout positions file. StepSize follows the controller live (StepperStepSize); RewardUl is what RewardLeft and RewardRight deliver: 3 ul until RewardSizeUl is set or the first trial gives its size.
  Workflow
    ExternalizedMapping(Value(DisplayName=SubjectId, Description="The subject (mouse) ID."))
    -> StringProperty(Value="")
    -> Take(Count=1)
    -> AsyncSubject SubjectId

    ExternalizedMapping(SessionId) => #4
    SubscribeSubject SubjectId
    -> PropertyMapping(SubjectId) => #6
    #4, #6 -> IncludeWorkflow => #7
      Path=OpenRigs.Control:SessionControl.bonsai
      SubjectId=UNMAPPED
      SessionId=""
      ControlEndpoint=@tcp://127.0.0.1:5561
      Parameters
        Parameter
          Name=TrainingStage
          Value=4
          Description="Row of the task file's trainingStages to run, 0 to 5 (a row past the end uses the last): the GUI's Training Stage."
          Minimum=0
          Maximum=5
          WholeNumber=true
        Parameter(Name=TaskFile, Value=task.yml, Description="The task file to run, in the repository's config folder, read at Go.")
        Parameter
          Name=RewardSizeUl
          Value=""
          Description="Reward size in microlitres, for every training stage; blank keeps the task file's. Also the size RewardLeft and RewardRight deliver before Go."
        Parameter(Name=ItiMin, Value="", Description="Shortest inter-trial interval in seconds; blank keeps the task file's.")
        Parameter(Name=ItiMax, Value="", Description="Longest inter-trial interval in seconds; blank keeps the task file's.")
        Parameter(Name=Zapit, Value="", Description="Optogenetics: on or off; blank keeps the task file's optogenetics.enabled.")
        Parameter(Name=StepSize, Value=150, Description="Motor steps each spout nudge command moves, taken live while ready.", Minimum=1, WholeNumber=true)
      Commands
        Command(Name=RewardLeft, Description="Deliver one reward on the left spout (flush).")
        Command(Name=RewardRight, Description="Deliver one reward on the right spout (flush).")
        Command(Name=SpoutsHome, Description="Move both spouts to the home position.")
        Command(Name=SpoutsIn, Description="Move both spouts to the in position.")
        Command(Name=SpoutsOut, Description="Move both spouts to the out position.")
        Command(Name=SaveSpoutPositions, Description="Save the spouts' in positions to this mouse's file.")
        Command(Name=LeftUp, Description="Nudge the left spout up by StepSize.")
        Command(Name=LeftDown, Description="Nudge the left spout down by StepSize.")
        Command(Name=RightUp, Description="Nudge the right spout up by StepSize.")
        Command(Name=RightDown, Description="Nudge the right spout down by StepSize.")
        Command(Name=LeftFront, Description="Nudge the left spout forward by StepSize.")
        Command(Name=LeftBack, Description="Nudge the left spout back by StepSize.")
        Command(Name=RightFront, Description="Nudge the right spout forward by StepSize.")
        Command(Name=RightBack, Description="Nudge the right spout back by StepSize.")
        Command(Name=BaseLeft, Description="Nudge the spout base left by StepSize.")
        Command(Name=BaseRight, Description="Nudge the spout base right by StepSize.")
    SubscribeSubject SubjectId => #8
    #7, #8 -> SubscribeWhen

    SubscribeSubject SessionGo
    -> MemberSelector(Selector=SubjectId) => #11
    SubscribeSubject SessionGo
    -> MemberSelector(Selector=SessionId) => #13
    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=TrainingStage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StageToInt => #16
      Expression: Convert.ToInt32(it)
    #11, #13, #16 -> Zip
    -> Take(Count=1)
    -> Condition RunSettingsValid(Description="Subject and session given; the stage's limits are the parameter's.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1.Trim().Length > 0 && Item2.Trim().Length > 0
        -> WorkflowOutput
    -> First
    -> AsyncSubject RunSettings

    SubscribeSubject RunSettings
    -> MemberSelector(Selector=Item3)
    -> AsyncSubject TrainingStage

    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=TaskFile)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TaskFileInConfig
      Expression: "..\\config\\" + it
    -> AsyncSubject TaskFilePath

    BooleanProperty(Value=false)
    -> BehaviorSubject StartSession

    SubscribeSubject SessionGo
    -> BooleanProperty(Value=true)
    -> MulticastSubject StartSession

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=StepSize)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StepSizeToInt
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    DoubleProperty(Value=3)
    -> BehaviorSubject RewardUl

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=RewardSizeUl)
    -> Condition Given?(Description="A blank set keeps the size as it was.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Trim().Length > 0
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToDouble
      Expression: Convert.ToDouble(it)
    -> MulticastSubject RewardUl

    SubscribeSubject SteppersZEROed
    -> Take(Count=1)
    -> OpenRigs.Control.ReportPhase(Phase=Ready)

GroupWorkflow InitialiseTrials
    Annotation "Read task configuration"
      Text: At Go: the task file the controller named (TaskFile, in config\) is read and the controller's RewardSizeUl, ItiMin, ItiMax and Zapit applied (blank keeps the file's), then published as TaskConfig and snapshotted to the session as TaskSchema.json. Nothing is read before Go, so the controller's choice of file counts.
    -> SubscribeSubject TaskFilePath
    -> UclOpenAvDome.ReadTextFile
    -> UclOpenAvDomeTask.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDomeTask.UclOpenAvDomeTaskLogic>) => #3
    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=RewardSizeUl) => #5
    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=ItiMin) => #7
    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=ItiMax) => #9
    SubscribeSubject SessionGo
    -> OpenRigs.Control.ParameterValue(Name=Zapit) => #11
    #3, #5, #7, #9, #11 -> Zip
    -> UclOpenAvDome.ApplyTaskOverrides
    -> AsyncSubject TaskConfig

    Annotation "Initialised first trial"(Text="The first trial, from the task configuration and the controller's TrainingStage; later trials come from RedefineTrialData.")
    -> SubscribeSubject TaskConfig => #16
    SubscribeSubject TrainingStage
    -> PropertyMapping(trainingStageId) => #18
    #16, #18 -> InitialiseTrial(trainingStageId=1, TrialType=-1, WasCorrect=true, WasTimeout=false, SeedOffset=0, TrialNumber=0)
    -> BehaviorSubject thisTrialData

GroupWorkflow Status
  Description: What the old GUI showed, reported to the controller as metrics (ReportMetric; the latest value of each is in status): trial_count, the current trial's target_side, auto_reward, trial_type, visual_azimuth, audio_azimuth and reward_size_ul, water_ml (rig-control records it against the mouse: WaterDelivered is reset at Go, so flushes before Go do not count, and reported in ml), licks_left and licks_right (lick onsets since Go) and performance_pct (correct over responded trials, the GUI's Performance). Session time is the controller's own; the response-history graphs are gone; the camera feeds are on the live view (StreamDevices).
  Workflow
    SubscribeSubject TrialCount
    -> OpenRigs.Control.ReportMetric(Name=trial_count)

    SubscribeSubject thisTrialData => #2
    -> MemberSelector(Selector=targetSide)
    -> OpenRigs.Control.ReportMetric(Name=target_side)
    #2 -> MemberSelector(Selector=autoReward)
    -> OpenRigs.Control.ReportMetric(Name=auto_reward)
    #2 -> MemberSelector(Selector=trialType)
    -> OpenRigs.Control.ReportMetric(Name=trial_type)
    #2 -> MemberSelector(Selector=visualAzimuth)
    -> OpenRigs.Control.ReportMetric(Name=visual_azimuth)
    #2 -> MemberSelector(Selector=audioAzimuth)
    -> OpenRigs.Control.ReportMetric(Name=audio_azimuth)
    #2 -> MemberSelector(Selector=RewardSizeInUl)
    -> OpenRigs.Control.ReportMetric(Name=reward_size_ul)
    #2 -> MemberSelector(Selector=RewardSizeInUl)
    -> MulticastSubject RewardUl

    SubscribeSubject SessionGo
    -> DoubleProperty(Value=0)
    -> MulticastSubject WaterDelivered

    SubscribeSubject WaterDelivered => #20
    SubscribeSubject SessionGo => #21
    #20, #21 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform UlToMl
      Expression: it / 1000.0
    -> OpenRigs.Control.ReportMetric(Name=water_ml)

    SubscribeSubject LickStateLeft => #25
    SubscribeSubject SessionGo => #26
    #25, #26 -> SubscribeWhen
    -> Condition Licked?
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform One
      Expression: 1
    -> Accumulate
    -> OpenRigs.Control.ReportMetric(Name=licks_left)

    SubscribeSubject LickStateRight => #32
    SubscribeSubject SessionGo => #33
    #32, #33 -> SubscribeWhen
    -> Condition Licked?
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform One
      Expression: 1
    -> Accumulate
    -> OpenRigs.Control.ReportMetric(Name=licks_right)

    IntProperty(Value=0) => #39
    IntProperty(Value=0) => #40
    #39, #40 -> Zip
    -> BehaviorSubject PerformanceTracker

    SubscribeSubject ResponseData => #43
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #45
    #43, #45 -> WithLatestFrom
    -> SelectMany
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: new(Item1.CorrectResponse as CorrectResponse, Item1.Response as ResponseType, Item1.TrialCnt as TrialCnt, Item2 as BothSpouts)
        -> Condition Correct? => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        SubscribeSubject PerformanceTracker => #3
        #2, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> MemberSelector(Selector=Item1)
        -> Add(Operand=IntProperty(Value=1)) => #7
        #5 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #1 -> Condition Incorrect? => #10
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        #10, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #12
        -> MemberSelector(Selector=Item1) => #13
        #12 -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1)) => #15
        #13, #15 -> Zip => #16
        #1 -> Condition Neither? => #17
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd => #5
            #0 -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #7
            #0 -> MemberSelector(Selector=BothSpouts) => #8
            #7, #8 -> Zip
            -> BitwiseAnd => #10
            #5, #10 -> Zip
            -> BitwiseOr
            -> BitwiseNot
            -> WorkflowOutput
        #17, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        #9, #16, #19 -> Amb
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject PerformanceTracker

    SubscribeSubject PerformanceTracker
    -> Bonsai.Scripting.Expressions.ExpressionTransform PerCent
      Expression: (Item1 + Item2) == 0 ? 0 : 100 * Item1 / (Item1 + Item2)
    -> OpenRigs.Control.ReportMetric(Name=performance_pct)

GroupWorkflow Commands
  Description: The controller's commands, while ready or recording: rewards (flushes) on either spout, the spouts home, in and out, nudging each spout and the base by StepSize, and saving this mouse's spout positions. The valve and stepper logic is the old GUI's; only its sources changed, from buttons to OnCommand.
  Workflow
    Annotation Commands
      Text: Each command the controller may send (declared on SessionControl) raises the subject the valve and stepper logic below already listens to. Spout nudges pair as the GUI's buttons did: Left/Right Up/Down are motors 4/5, Left/Right Front/Back motors 2/3, Base Left/Right motor 1.

    SubscribeSubject ControlEvents => #1
    -> OpenRigs.Control.OnCommand(Name=RewardLeft)
    -> PublishSubject RewardLeft
    #1 -> OpenRigs.Control.OnCommand(Name=RewardRight)
    -> PublishSubject RewardRight
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsHome)
    -> PublishSubject SpoutsHome
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsIn)
    -> PublishSubject SpoutsIn
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsOut)
    -> PublishSubject SpoutsOut
    #1 -> OpenRigs.Control.OnCommand(Name=SaveSpoutPositions)
    -> PublishSubject SaveSpoutPositions
    #1 -> OpenRigs.Control.OnCommand(Name=LeftUp)
    -> PublishSubject Motor4_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftDown)
    -> PublishSubject Motor4_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightUp)
    -> PublishSubject Motor5_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightDown)
    -> PublishSubject Motor5_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=LeftFront)
    -> PublishSubject Motor2_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftBack)
    -> PublishSubject Motor2_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightFront)
    -> PublishSubject Motor3_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightBack)
    -> PublishSubject Motor3_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=BaseLeft)
    -> PublishSubject Motor1_UP
    #1 -> OpenRigs.Control.OnCommand(Name=BaseRight)
    -> PublishSubject Motor1_DOWN

    Annotation "Spout positions file"
      Text: This mouse's spout positions: <RigConfigDirectory>\calibration\LickSpoutPositions\<SubjectId>.csv, read at Start (ReadPositions) and written by SaveSpoutPositions.

    SubscribeSubject RigConfigDirectory
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
      Expression: it + "\\calibration\\LickSpoutPositions\\"
    SubscribeSubject SubjectId => #37
    #36, #37 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 + it.Item2 + ".csv"
    -> BehaviorSubject SpoutPositionFileName

    GroupWorkflow ValveCommands(Description=ValveGUICallbacks)
        SubscribeSubject RewardLeft
        -> IntProperty(Value=1) => #1
        SubscribeSubject RewardRight
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject RewardUl => #5
        #4, #5 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand
        -> WorkflowOutput

    GroupWorkflow StepperCommands(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")
        -> GroupWorkflow "Position Update"(Description="Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn

            SubscribeSubject StepperPosition_BothIn => #14
            Annotation "Sends command with every update"(Text="Sends command with every update") => #15
            #14, #15 -> SelectMany "Send command when session not running" => #16
                WorkflowInput Source1 => #0
                SubscribeSubject StartSession => #1
                #0, #1 -> WithLatestFrom => #2
                -> Condition "Send Command?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject StepperPositionCommand => #5
                #2 -> Condition "Don't send?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #7
                #5, #7 -> Merge => #8
                #2, #8 -> Sample
                -> WorkflowOutput
            GroupWorkflow "Init Positions"(Description="Init Positions") => #17
                Disable Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> Disable IntProperty(Value=3550)
                -> Disable BehaviorSubject Motor1_Position => #2
                Disable Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> Disable IntProperty(Value=5500)
                -> Disable BehaviorSubject Motor2_Position => #5
                Disable Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> Disable IntProperty(Value=4700)
                -> Disable BehaviorSubject Motor3_Position => #8
                Disable Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> Disable IntProperty(Value=2150)
                -> Disable BehaviorSubject Motor4_Position => #11
                Disable Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> Disable IntProperty(Value=950)
                -> Disable BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Disable Merge
                -> Disable WorkflowOutput

                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=LickSpoutDefaultPosition) => #18
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #19
                #18, #19 -> MemberSelector(Selector=LeftElevation)
                -> BehaviorSubject Motor1_Position => #21
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #22
                #18, #22 -> MemberSelector(Selector=RightElevation)
                -> BehaviorSubject Motor2_Position => #24
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #25
                #18, #25 -> MemberSelector(Selector=RightRadial)
                -> BehaviorSubject Motor3_Position => #27
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #28
                #18, #28 -> MemberSelector(Selector=LeftRadial)
                -> BehaviorSubject Motor4_Position => #30
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #31
                #18, #31 -> MemberSelector(Selector=BaseTransverse)
                -> BehaviorSubject Motor5_Position => #33
                #21, #24, #27, #30, #33 -> Merge
                -> WorkflowOutput
            #16, #17 -> SubscribeWhen => #18
            SubscribeSubject SteppersZEROed => #19
            #18, #19 -> SubscribeWhen

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #22
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #25
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #28
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #31
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #34
            #22, #25, #28, #31, #34 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #38
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #40
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #43
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #45
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #48
            #38, #40, #43, #45, #48 -> CombineLatest
            -> MulticastSubject StepperPosition_LeftIN

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #52
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #55
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #57
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #60
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #62
            #52, #55, #57, #60, #62 -> CombineLatest
            -> MulticastSubject StepperPosition_RightIN

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")
        -> GroupWorkflow PositionButtonCallbacks(Description="PositionButtonCallbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject SpoutsHome => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsIn => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsOut => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")
        -> SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    SubscribeSubject SpoutPositionFileName
    -> PropertyMapping(FileName) => #44
    SubscribeSubject SaveSpoutPositions => #45
    SubscribeSubject SpoutPositionFileName => #46
    #45, #46 -> SubscribeWhen => #47
    Disable Annotation "Should be GUI button to save"(Text="Should be GUI button to save")
    -> Disable Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=true) => #49
    #44, #47, #49 -> SelectMany WritePositions
        WorkflowInput Source1

        SubscribeSubject Motor1_Position => #1
        SubscribeSubject Motor2_Position => #2
        SubscribeSubject Motor3_Position => #3
        SubscribeSubject Motor4_Position => #4
        SubscribeSubject Motor5_Position => #5
        #1, #2, #3, #4, #5 -> Zip
        -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #7
        ExternalizedMapping(FileName) => #8
        #7, #8 -> Bonsai.IO.CsvWriter(FileName=UNMAPPED, Delimiter=",", ListSeparator=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=it)
        -> Take(Count=1)
        -> WorkflowOutput

    SubscribeSubject SpoutPositionFileName
    -> SelectMany ReadPositions
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject _fName

        SubscribeSubject _fName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject _fName
        -> FileExists => #6
        -> Condition True? => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #7 -> SelectMany LoadSpoutPositions
            WorkflowInput Source1

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=UNMAPPED, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #2
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Motor1_Position => #4
            #2 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Motor2_Position => #6
            #2 -> MemberSelector(Selector=Item3)
            -> MulticastSubject Motor3_Position => #8
            #2 -> MemberSelector(Selector=Item4)
            -> MulticastSubject Motor4_Position => #10
            #2 -> MemberSelector(Selector=Item5)
            -> MulticastSubject Motor5_Position => #12
            #4, #6, #8, #10, #12 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6 -> Condition False? => #10
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9, #10 -> Merge
        -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow LogControllerLogic
      Description: Waits for Go (RunSettings: the controller's SubjectId and SessionId), then LogController creates the session folder RootPath\DatasetName\sub-<SubjectId>\ses-<SessionId>_<DateTime> and publishes it as PathPrefix, which every log waits for. DatasetName is the task file's, so TaskConfig must have been read (at Go).
      Workflow
        SubscribeSubject RunSettings
        -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #1
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=RootPath) => #3
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.DatasetName) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "\\" + Item2
        -> PropertyMapping(Path) => #8
        #1, #8 -> IncludeWorkflow(Path=OpenRigs.Logging:LogController.bonsai, SubjectId=UNMAPPED, SessionId=UNMAPPED, Path=C:\data\AV_Dome)
        -> DelaySubscription(DueTime=PT1S) => #10
        SubscribeSubject RunSettings => #11
        #10, #11 -> SubscribeWhen
        -> WorkflowOutput

    SubscribeSubject PathPrefix
    -> SelectMany SessionLogs
      Description: Starts every session log once LogControllerLogic publishes PathPrefix. Subjects that already hold a value (BehaviorSubject, AsyncSubject) hand it to the late subscriber. Values set at startup, such as the Zapit startup replies and the first trial draw, are therefore logged at the Set Mouse ID time instead of failing their CsvWriter. Add new loggers inside this group.
      Workflow
        GroupWorkflow TrialParameters
            SubscribeSubject ResponseData => #0
            SubscribeSubject thisTrialData => #1
            #0, #1 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                    Item1.CorrectResponse as correctResponse,
                    Item1.Response as response,
                    Item1.TrialCnt as TrialCnt,
                    Item2.trialType as trialType,
                    Item2.RewardProbability as RewardProbability,
                    Item2.IsRewarded as IsRewarded,
                    Item2.IsRepeat as IsRepeat,
                    Item2.RepeatCount as RepeatCount,
                    Item2.targetSide as targetSide,
                    Item2.ITI as ITI,
                    Item2.Quiescent as Quiescent,
                    Item2.rngSeedUsed as rngSeedUsed,
                    Item2.autoRewardProbability as autoRewardProbability,
                    Item2.autoReward as autoReward,
                    Item2.largeReward as largeReward,
                    Item2.RewardSizeInUl as RewardSizeInUl,
                    Item2.BothSpouts as BothSpouts,
                    Item2.visualAzimuth as visualAzimuth,
                    Item2.visualContrast as visualContrast,
                    Item2.visualPhase as visualPhase,
                    Item2.audioAzimuth as audioAzimuth,
                    Item2.OptogeneticEnabled as OptogeneticEnabled,
                    Item2.OptogeneticCondition as OptogeneticCondition,
                    Item2.OptogeneticDelay as OptogeneticDelay,
                    Item2.OptogeneticDuration as OptogeneticDuration,
                    Item2.OptogeneticPower as OptogeneticPower,
                    Item2.IncorrectTimeoutDuration as IncorrectTimeoutDuration,
                    Item2.LargeRewardMultiplier as LargeRewardMultiplier,
                    Item2.LargeRewardProbability as LargeRewardProbability,
                    Item2.BothSpoutsProbability as BothSpoutsProbability,
                    Item2.openLoopDuration as openLoopDuration,
                    Item2.closedLoopDuration as closedLoopDuration,
                    Item2.visualElevation as visualElevation,
                    Item2.visualGaussianWindowSigma as visualGaussianWindowSigma,
                    Item2.visualOrientation as visualOrientation,
                    Item2.visualSpatialFrequency as visualSpatialFrequency,
                    Item2.visualTemporalFrequency as visualTemporalFrequency,
                    Item2.visualFlickerFrequency as visualFlickerFrequency,
                    Item2.audioElevation as audioElevation,
                    Item2.audioFlickerFrequency as audioFlickerFrequency)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=TrialSettings, Selector="", Extension=csv)
            -> WorkflowOutput

        GroupWorkflow BehaviorBoard
            SubscribeSubject BehaviorBoard-Main.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> GroupWorkflow ExcludeAnalogDataMaybe
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
                -> BooleanProperty(Value=false) => #2
                #0, #2 -> WithLatestFrom => #3
                -> Condition Flagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
                #3 -> Condition NotFlagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #8
                #6, #8 -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=BehaviorBoard-Main)

        GroupWorkflow Cameras
            SubscribeSubject PathPrefix
            -> SelectMany
                SubscribeSubject Camera-Face.Data
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Face) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Face) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Face.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Face) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Face) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Face.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                SubscribeSubject Camera-Pupil.Data
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Pupil) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Pupil) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Pupil.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Pupil) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Pupil) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Pupil.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=true
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                SubscribeSubject Camera-Body.Data
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Body) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Body) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Body.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Camera-Body) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=Camera-Body) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\Camera-Body.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=true
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

        Disable GroupWorkflow Audio
            SubscribeSubject AudioTrigger
            -> StringProperty(Value=AudioTrigger)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
            -> WorkflowOutput

        GroupWorkflow LicketySplit
            SubscribeSubject LicketySplit-Left.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Left)

            SubscribeSubject LicketySplit-Right.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Right)

        SubscribeSubject TimestampGeneratorGen3-Main.Data
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=TimestampGeneratorGen3-Main)

        SubscribeSubject StartSession
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=SessionState, Selector="Seconds,Value", Extension=csv)

        SubscribeSubject RigConfigs
        -> UclOpenAvDome.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow RigSchema(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskConfig
        -> UclOpenAvDomeTask.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow TaskSchema(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        GroupWorkflow ZapitReplies
          Description: Harp-timestamped log of every Zapit reply: the presented condition and laser state per StartStimulus, plus the last startup query reply (GetNumConditions), handed over by the ZapitReplies BehaviorSubject when SessionLogs starts.
          Workflow
            SubscribeSubject ZapitReplies
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                                CommandCode as command,
                                Value as value,
                                LaserOn as laserOn,
                                IsError as isError,
                                ServerDatenum as serverDatenum)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=Zapit, Selector="", Extension=csv)
            -> WorkflowOutput

        GroupWorkflow StimulusTriggerLogs(Description="Harp-timestamped CSV log of the auditory/stimulus-presentation trigger (StartAuditoryStimulus).")
            SubscribeSubject StartAuditoryStimulus
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=StimulusStartEvents, Selector="Seconds,Value", Extension=csv)

            SubscribeSubject DecisionVariable
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=DecisionVariable, Selector="Seconds,Value", Extension=csv)

            SubscribeSubject visualAzimuth
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=VisualAzimuth, Selector="Seconds,Value", Extension=csv)

        SubscribeSubject StepperDriver1Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LickSpoutStage-Main_DriverA)

        SubscribeSubject StepperDriver2Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LickSpoutStage-Main_DriverB)

    SubscribeSubject RewardLineLeft
    -> Condition Calibrated?
        WorkflowInput Source1
        -> MemberSelector(Selector=Calibrated)
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO1(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardLineRight
    -> Condition Calibrated?
        WorkflowInput Source1
        -> MemberSelector(Selector=Calibrated)
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO2(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardDelivered
    -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow
      Path=OpenRigs.Logging:LogData.bonsai
      LogName=RewardDelivery
      Selector="Seconds,Value.Line,Value.RequestedUl,Value.DeliveredUl,Value.Count,Value.VolumePerPulseUl,Value.Calibrated,Value.Clamped"

    SubscribeSubject PathPrefix
    -> OpenRigs.Control.ReportMetric(Name=path)
    -> OpenRigs.Control.ReportPhase(Phase=Recording)

    OpenRigs.HarpDevices.RecordHarpDevices RecordHarpDevices
      Description: Checks every Harp device in rig.yml at Start and records it into each session (OpenRigs.HarpDevices): the Behavior board, the timestamp generator and both Lickety Splits (each a rig.yml entry with a portName whose data the workflow publishes as <Name>.Data) must be on their portName with their usbSerial, or the workflow stops saying which board is where; 0.5 s after the session folder appears it asks each for a register dump on <Name>.Commands, which its log records; and it writes <Name>\<Name>_device.json and the register map <Name>\<Name>.yml, which SessionManifest expects (harp). The lick spout stage's two driver boards are nested under one entry, so they are not checked here; their logs go into LickSpoutStage-Main.
      ConfigRoot=C:\Coen-Lab-Local\RigConfigs

    OpenRigs.Manifest.SessionManifest SessionManifest
      Description: Writes manifest.json into the session folder (OpenRigs.Manifest), finding PathPrefix itself: once when the folder appears and again when the workflow stops. No run is connected: a session ends with the controller's Stop, recorded as stopped with its reason. It records the machine, this repo's commit, Bonsai's command line, the settings at Go (SubjectId, SessionId and every parameter), rig.yml's path and hash, and what the session must leave: a folder for each device in rig.yml (BehaviorBoard-Main, TimestampGeneratorGen3-Main, LickSpoutStage-Main, LicketySplit-Left/Right, Camera-Face/Pupil/Body), the record and register map RecordHarpDevices writes for each Harp device (harp), RigSchema, TrialSettings, SessionState and StimulusStartEvents, which the overnight copy (rig-sync) alarms on if missing.
      IngestScript=av-dome
      ConfigFiles=C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\rig.yml
      ExpectedFiles=auto;harp;RigSchema/;TrialSettings/;SessionState/;StimulusStartEvents/

SubscribeSubject ResponseData
-> SelectMany RedefineTrialData
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject source

    SubscribeSubject source => #3
    ExternalizedMapping(SeedOffset) => #4
    #3, #4 -> SelectMany RedefineTrial
        SubscribeSubject TaskConfig => #0
        Annotation "Without, WasCorrect doesn't get updated"(Text="Without, WasCorrect doesn't get updated") => #1
        #0, #1 -> Delay(DueTime=PT0.1S) => #2
        ExternalizedMapping(SeedOffset) => #3
        SubscribeSubject TrainingStage
        -> PropertyMapping(trainingStageId) => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=CorrectResponse) => #7
        -> Equal(Operand=StringProperty(Value=Correct)) => #8
        #7 -> Equal(Operand=StringProperty(Value=AutoRewarded)) => #9
        #8, #9 -> Zip
        -> BitwiseOr
        -> PropertyMapping(WasCorrect) => #12
        #7 -> Equal(Operand=StringProperty(Value=NoResponse))
        -> PropertyMapping(WasTimeout) => #14
        SubscribeSubject TrialCount
        -> PropertyMapping(TrialNumber) => #16
        #2, #3, #5, #12, #14, #16 -> InitialiseTrial(trainingStageId=4, TrialType=-1, WasCorrect=false, WasTimeout=true, SeedOffset=1, TrialNumber=344) => #17
        -> WorkflowOutput
        #17 -> MemberSelector(Selector=trialType)
        #17 -> MemberSelector(Selector=targetSide)
        #17 -> MemberSelector(Selector=visualContrast)
    -> Take(Count=1) => #6
    -> WorkflowOutput
    #6 -> MemberSelector(Selector=trialType)
-> MulticastSubject thisTrialData

SubscribeSubject thisTrialData
-> SelectMany SetTrialVars
    WorkflowInput Source1
    -> MemberSelector(Selector=visualAzimuth) => #1
    -> MulticastSubject visualAzimuthStart
    #1 -> MulticastSubject visualAzimuth

    IntProperty(Value=0)
    -> MulticastSubject DecisionVariable

SubscribeSubject thisTrialData
-> SelectMany ArmZapit => #15
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settings => #2
    Disable SubscribeSubject ZapitReplies
    -> Disable Skip(Count=1)
    -> Disable Condition ArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.")
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: It.CommandCode == 1 && !It.IsError
        -> WorkflowOutput
        #1 -> MemberSelector(Selector=IsError)
        #1 -> MemberSelector(Selector=CommandCode)
    -> Disable Condition GerionsHackArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.") => #6
        WorkflowInput Source1
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !It.IsError
        -> WorkflowOutput
    Disable SubscribeSubject settings => #7
    #6, #7 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: !OptogeneticEnabled
    -> Disable Take(Count=1) => #11
    SubscribeSubject settings => #12
    -> Condition OptoTrial? => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=OptogeneticEnabled)
        -> WorkflowOutput
    SubscribeSubject settings
    -> PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #15
    SubscribeSubject RigConfigs
    -> PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #17
    #13, #15, #17 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
    -> MulticastSubject ZapitCommands
    -> BooleanProperty(Value=false) => #20
    #12 -> Condition NotOptoTrial?
        WorkflowInput Source1
        -> MemberSelector(Selector=OptogeneticEnabled)
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #22
    #20, #22 -> Merge => #23
    #2, #11, #23 -> Sample
    -> WorkflowOutput

    Disable Timer(DueTime=PT10S)
    -> Disable StringProperty(Value="Zapit did not reply in time (10s)")
    -> Disable ThrowError
Annotation NEEDED!(Text=NEEDED!) => #16
#15, #16 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.1)
-> SelectMany StartLaser
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settings => #2
    SubscribeSubject settings => #3
    SubscribeSubject RigConfigs => #4
    #3, #4 -> Zip
    -> Disable Condition HardwareTriggeredOptoTrial?
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> MemberSelector(Selector=OptogeneticEnabled) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.Zapit.TriggerLine)
    -> MulticastSubject TriggerPulse => #8
    Disable SubscribeSubject settings
    -> Disable PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #10
    Disable SubscribeSubject RigConfigs
    -> Disable PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #12
    #8, #10, #12 -> Disable CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
    -> Disable MulticastSubject ZapitCommands => #14
    #2, #14 -> Sample
    -> WorkflowOutput
-> Disable SelectMany "Present Spouts"
    WorkflowInput Source1 => #0
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #2
    -> Condition True?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany SendSpoutINCommand => #4
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_BothIn
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> Sample
        -> WorkflowOutput
    #2 -> Condition False?
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany PresentTargetSpoutOnly => #6
        WorkflowInput Source1 => #0
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=targetSide) => #2
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand => #4
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #2 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand => #6
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #4, #6 -> Merge => #7
        #0, #7 -> Sample
        -> WorkflowOutput
    #4, #6 -> Merge => #7
    #0, #7 -> Sample
    -> WorkflowOutput
-> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.5)
-> Disable Zip
-> Disable MemberSelector(Selector=Item1)
-> SelectMany ExecuteTrial => #23
    WorkflowInput Source1
    -> AsyncSubject trial

    PublishSubject<System.String> StopStimuli

    SubscribeSubject trial
    -> SelectMany StimuliPresentation
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings

        Annotation "Auditory Stimulus"(Text="Auditory Stimulus")
        -> SubscribeSubject settings
        -> SelectMany "Define Speaker location"
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=audioAzimuth)
            -> PropertyMapping(X) => #2
            Source2=#2 -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0) => #3
            SubscribeSubject SpeakerLocations
            -> PropertyMapping(Locations) => #5
            #3, #5 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
            -> MulticastSubject ActiveSoundChannels => #7
            WorkflowInput Source1 => #8
            #7, #8 -> Sample
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryStimulus

        Annotation "Visual Stimulus"(Text="Visual Stimulus")
        -> SubscribeSubject settings
        -> SelectMany FlashingVisualStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trialSettings

            SubscribeSubject DrawStimuli => #3
            Annotation 16Hz(Text=16Hz) => #4
            SubscribeSubject trialSettings
            -> MemberSelector(Selector=visualFlickerFrequency) => #6
            Annotation "Double freq for On/Off"(Text="Double freq for On/Off") => #7
            #6, #7 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 / (2 * it))
            -> PropertyMapping(Period) => #9
            #4, #9 -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.063S)
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #11
            #3, #11 -> WithLatestFrom => #12
            -> MemberSelector(Selector=Item1) => #13
            #12 -> MemberSelector(Selector=Item2) => #14
            Annotation "Makes it 8Hz"(Text="Makes it 8Hz") => #15
            #14, #15 -> Condition => #16
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> WorkflowOutput
            #13, #16 -> Sample => #17
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #18
            #17, #18 -> IncludeWorkflow => #19
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Annotation "Either Response or Timeout"(Text="Either Response or Timeout")
            -> SubscribeSubject StopStimuli => #21
            #19, #21 -> TakeUntil => #22
            Annotation "GratingSettings from Schema"(Text="GratingSettings from Schema")
            -> SubscribeSubject trialSettings
            -> PropertyMapping => #25
              Contrast(Selector=visualContrast)
              LocationY(Selector=visualElevation)
              TemporalFrequency(Selector=visualTemporalFrequency)
              SpatialFrequency(Selector=visualSpatialFrequency)
              Angle(Selector=visualOrientation)
              Phase(Selector=visualPhase)
            Annotation "Extend in deg"(Text="Extend in deg")
            -> Annotation "Large enough so you dont see any edges"(Text="Large enough so you dont see any edges")
            -> Annotation "100 makes rel. numbers below easier!"(Text="100 makes rel. numbers below easier!")
            -> FloatProperty(Value=100) => #29
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #30
            Disable Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg")
            -> Disable FloatProperty(Value=9) => #32
            SubscribeSubject trialSettings => #33
            Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg") => #34
            #33, #34 -> MemberSelector(Selector=visualGaussianWindowSigma) => #35
            #32, #35 -> Multiply(Operand=FloatProperty(Value=2)) => #36
            #36, #29 -> Zip => #37
            Annotation RelativeSigma(Text=RelativeSigma) => #38
            #37, #38 -> Divide
            -> PropertyMapping(Aperture(Selector=it)) => #40
            Annotation "Norm. 1: full size of ExtentX/Y"(Text="Norm. 1: full size of ExtentX/Y")
            -> FloatProperty(Value=1)
            -> PropertyMapping(Radius) => #43
            SubscribeSubject visualAzimuth
            -> PropertyMapping(LocationX) => #45
            #17, #25, #30, #40, #43, #45 -> IncludeWorkflow => #46
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=100
              ExtentY=100
              SpatialFrequency=0.06666667
              TemporalFrequency=0
              Phase=298.032227
              Angle=0
              SquareWave=false
              Contrast=0
              DutyCycle=nil
              Radius=1
              Aperture=0.4
              Opacity=1
            #46, #21 -> TakeUntil => #47
            #14 -> Condition Not => #48
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> BitwiseNot
                -> WorkflowOutput
            #3, #48 -> Sample => #49
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #50
            #49, #50 -> IncludeWorkflow => #51
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            #51, #21 -> TakeUntil => #52
            #22, #47, #52 -> Zip
            -> WorkflowOutput

            StringProperty(Value=Done)
            -> MulticastSubject StopStimuli => #56
            Bonsai.Shaders.Timer(DueTime=PT1.5S) => #57
            #56, #57 -> SubscribeWhen

        Disable SubscribeSubject settings => #11
        Disable SubscribeSubject RigConfigs => #12
        #11, #12 -> Disable Zip
        -> Disable Condition HardwareTriggeredOptoTrial?
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=OptogeneticEnabled) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
            #2, #4 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Disable MemberSelector(Selector=Item2.Zapit.TriggerLine)
        -> Disable MulticastSubject TriggerPulse => #16
        Disable SubscribeSubject settings
        -> Disable PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #18
        Disable SubscribeSubject RigConfigs
        -> Disable PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #20
        #16, #18, #20 -> Disable CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
        -> Disable MulticastSubject ZapitCommands
    -> PublishSubject StimuliFinished

    SubscribeSubject trial => #6
    SubscribeSubject trial
    -> MemberSelector(Selector=openLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> PropertyMapping(DueSeconds) => #10
    #6, #10 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0)
    -> Disable SelectMany Response => #12
        SubscribeSubject LickStateLeft
        -> Take(Count=1) => #1
        SubscribeSubject trial => #2
        #1, #2 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Left)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Left) => #5
        SubscribeSubject LickStateRight
        -> Take(Count=1) => #7
        #7, #2 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Right)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Right) => #10
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S)
        -> Take(Count=1) => #13
        #13, #2 -> WithLatestFrom
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #16
        SubscribeSubject trial
        -> MemberSelector(Selector=autoReward)
        -> Take(Count=1) => #19
        #13, #19 -> WithLatestFrom
        -> Condition AutoRewarded?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> StringProperty(Value=AutoRewarded) => #22
        #5, #10, #16, #22 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject trial => #13
    Annotation ResponseWindowInSec(Text=ResponseWindowInSec) => #14
    #13, #14 -> MemberSelector(Selector=closedLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> PropertyMapping(DueSeconds) => #17
    #12, #17 -> SelectMany ResponseNew => #18
        SubscribeSubject LickStateLeft
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject LickStateRight
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #5
        #2, #5 -> Merge => #6
        SubscribeSubject DecisionVariable => #7
        #6, #7 -> WithLatestFrom
        -> Add
        -> MulticastSubject DecisionVariable => #10
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.Response.DegreesPerLick) => #12
        #10, #12 -> WithLatestFrom
        -> Multiply => #14
        SubscribeSubject visualAzimuthStart => #15
        #14, #15 -> WithLatestFrom
        -> Add
        -> MulticastSubject visualAzimuth
        SubscribeSubject trial => #19
        ExternalizedMapping(DueSeconds) => #20
        #19, #20 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=1.5)
        -> Take(Count=1)
        -> StringProperty(Value=NoResponse) => #23
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.Response.ThresholdLicks) => #25
        #10, #25 -> WithLatestFrom => #26
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1 >= Item2
        -> Take(Count=1)
        -> StringProperty(Value=Left) => #29
        #26 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1 <= -Item2
        -> Take(Count=1)
        -> StringProperty(Value=Right) => #32
        #29, #32 -> Merge => #33
        #23, #33 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject TrialSuccess
    -> Disable MulticastSubject StopStimuli => #20
    Annotation Original(Text=Original) => #21
    #20, #21 -> Disable SelectMany ApplyConsequences
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #1
        WorkflowInput Source1 => #2
        #1, #2 -> WithLatestFrom => #3
        -> Condition NotAutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2") => #5
        -> Condition MISS
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse)
        -> SelectMany Timeout => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
        #5 -> Condition NotMISS => #10
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition INCORRECT
            WorkflowInput Source1
            -> Equal
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect)
        -> SelectMany Timeout => #14
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
        #10 -> Condition HIT
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        -> MulticastSubject RewardSide
        -> StringProperty(Value=Correct) => #17
        #3 -> Condition AutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2")
        -> MulticastSubject RewardSide
        -> StringProperty(Value=AutoRewarded) => #21
        #9, #14, #17, #21 -> Merge
        -> Take(Count=1) => #23
        Annotation "Give animal time to drink"(Text="Give animal time to drink") => #24
        #23, #24 -> Bonsai.Shaders.Delay(DueTime=PT1.5S)
        -> SelectMany SendSpoutOutCommand => #26
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        Annotation "Needed to move here so deliver rewards still executes"(Text="Needed to move here so deliver rewards still executes") => #27
        #26, #27 -> SelectMany ITI
            WorkflowInput Source1 => #0
            SubscribeSubject trial => #1
            Annotation "Subtract extra time for spout movements and drinking"(Text="Subtract extra time for spout movements and drinking") => #2
            #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(Math.Max(ITI-2.0, 0))
            -> PropertyMapping(DueTime) => #4
            #0, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.947S)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ApplyConsequencesNew => #23
        WorkflowInput Source1 => #0
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #2
        #0, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression:
            new (Item1 as Response,
            Item2.Item1 as targetSide,
            Item2.Item2 as autoReward)
        -> Condition Correct?
            WorkflowInput Source1
            -> MemberSelector(Selector="Response,targetSide")
            -> Equal
            -> WorkflowOutput
        -> Sink RewardResponseSide
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> MulticastSubject RewardSide
            -> WorkflowOutput
        -> StringProperty(Value=Correct) => #7
        #4 -> Condition Incorrect? => #8
            WorkflowInput Source1
            -> MemberSelector(Selector="Response,targetSide")
            -> NotEqual
            -> WorkflowOutput
        -> Condition AutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=autoReward)
            -> WorkflowOutput
        -> Sink RewardResponseSide
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> MulticastSubject RewardSide
            -> WorkflowOutput
        -> StringProperty(Value=IncorrectAutoRewarded) => #11
        #7, #11 -> Merge => #12
        Annotation "Give animal time to drink"(Text="Give animal time to drink") => #13
        #12, #13 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai) => #15
        #8 -> Condition NotAutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=autoReward)
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai)
        -> SelectMany PlayErrorSound
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Enabled)
            -> Take(Count=1)
            -> MulticastSubject StartAuditoryErrorSound
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect) => #19
        #4 -> Condition Miss?
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai)
        -> StringProperty(Value=NoResponse) => #22
        #15, #19, #22 -> Merge => #23
        SubscribeSubject trial => #24
        #23, #24 -> WithLatestFrom
        -> SelectMany ITI
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Item1) => #4
            SubscribeSubject source
            -> MemberSelector(Selector=Item2.ITI)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it -0.1
            -> PropertyMapping(DueSeconds) => #8
            #4, #8 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=4.75408554778159)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject TrialCount
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialCount => #27
    #23, #18, #27 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(it.Item1 as CorrectResponse,
            it.Item2 as Response,
            it.Item3 as TrialCnt)
    -> WorkflowOutput

    GroupWorkflow DeliverReward
        BehaviorSubject<System.String> RewardSide => #0
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=2) => #6
        #3, #6 -> Merge => #7
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Convert.ToDouble(it)
        #7, #10 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand

    Disable GroupWorkflow DeliverReward
        BehaviorSubject<System.Tuple(System.String,System.String)> RewardSide => #0
        -> Condition Left
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition Right
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=2) => #6
        #3, #6 -> Merge => #7
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Convert.ToDouble(Math.Ceiling(it / 2))
        #7, #10 -> WithLatestFrom
        -> SelectMany "Deliver Reward"
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject input

            SubscribeSubject input
            -> MemberSelector(Selector=Item1) => #4
            Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #5
            #4, #5 -> MulticastSubject TriggerPulse => #6
            SubscribeSubject RigConfigs => #7
            -> MemberSelector(Selector=BehaviorBoard.PulseController.PulseWidths.PulseDO1)
            -> Condition LeftValve? => #9
                WorkflowInput Source1

                SubscribeSubject input
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #7 -> MemberSelector(Selector=BehaviorBoard.PulseController.PulseWidths.PulseDO2)
            -> Condition RightValve? => #11
                WorkflowInput Source1

                SubscribeSubject input
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #9, #11 -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 * 0.001 * it)
            -> PropertyMapping(DueTime) => #14
            #6, #14 -> Bonsai.Shaders.Delay(DueTime=PT0.04S) => #15
            SubscribeSubject input
            -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #18
            #15, #18 -> RepeatCount(Count=2)
            -> WorkflowOutput
        -> WorkflowOutput

    SubscribeSubject trial
    -> MemberSelector(Selector=SpoutINDelay)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT0.5S)
    -> SelectMany "Present Spouts"
        WorkflowInput Source1 => #0
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=BothSpouts) => #2
        -> Condition True?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SendSpoutINCommand => #4
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothIn
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #2 -> Condition False?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany PresentTargetSpoutOnly => #6
            WorkflowInput Source1 => #0
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=targetSide) => #2
            -> Condition Left
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Left))
                -> WorkflowOutput
            -> SelectMany SendSpoutLeftINCommand => #4
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_LeftIN
                -> MulticastSubject StepperPositionCommand => #3
                #0, #3 -> Sample
                -> WorkflowOutput
            #2 -> Condition Right
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Right))
                -> WorkflowOutput
            -> SelectMany SendSpoutRightINCommand => #6
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_RightIN
                -> MulticastSubject StepperPositionCommand => #3
                #0, #3 -> Sample
                -> WorkflowOutput
            #4, #6 -> Merge => #7
            #0, #7 -> Sample
            -> WorkflowOutput
        #4, #6 -> Merge => #7
        #0, #7 -> Sample
        -> WorkflowOutput
Annotation => #24
  Text:
    Here we have the trial number and the reponse code.
    Things we want to do with this:

    1. Different outcomes depending on response,
            # Incorrect, then we have a timeout
            # Correct, valve trigger


    1. Track performance and visualise in the gui
            Track actual response (0/-1/1) of last 50 trials
            Running performance over 20 responsive trials (True/False)
#23, #24 -> BehaviorSubject ResponseData => #25
Annotation "This fires at declaration, so skip"(Text="This fires at declaration, so skip")
-> SubscribeSubject StartSession
-> Skip(Count=1)
-> Condition => #29
    WorkflowInput Source1
    -> WorkflowOutput
#25, #29 -> SubscribeWhen
-> TakeWhile
    SubscribeSubject StartSession
    -> WorkflowOutput
-> TakeLast(Count=1)
-> Repeat

OpenRigs.LiveView.StreamDevices LiveView
  Description: Streams every device in this machine's rig.yml that the workflow publishes, over ZeroMQ, for the live view (OpenRigs.LiveView): data on TCP 5556, video on 5558, from Start, in ready mode too. The three cameras as Camera-Face/Pupil/Body.video, 5 JPEG frames a second at 320 x 240, and the Behavior board's encoder from BehaviorBoard-Main.Data, 10 a second; each rate and size can be changed in rig.yml under the device's liveView:. Also elapsed, seconds since the session folder appeared, and liveview, this workflow and its commit. Every message carries the rig and the session key, ready until the session folder exists. Last in the workflow, because it streams only subjects built before it. A port already in use stops the workflow at Start.
  ConfigRoot=C:\Coen-Lab-Local\RigConfigs
  DataPort=5556
  VideoPort=5558
