WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice)
-> GroupWorkflow MetaData
    StringProperty(Value=GreenDome2)
    -> RigConfigs(MachineName=GREEN-DOME-2)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    GroupWorkflow Declarations
        BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking
        BehaviorSubject<System.String> TrialSuccess
        BehaviorSubject<System.Boolean> SessionPaused
        PublishSubject<System.String> StopStimuli
        Disable BehaviorSubject<System.Boolean> StopStimuli

        IntProperty(Value=0)
        -> BehaviorSubject TrialCount

        DoubleProperty(Value=0)
        -> BehaviorSubject WaterDelivered

        BehaviorSubject<System.Boolean> SteppersZEROed

        Disable DoubleProperty(Value=0) => #10
        -> Disable BehaviorSubject visualAzimuthStart
        #10 -> Disable BehaviorSubject visualAzimuth

        BehaviorSubject<System.Double> visualAzimuthStart
        BehaviorSubject<System.Double> visualAzimuth

        IntProperty(Value=0)
        -> BehaviorSubject DecisionVariable

    GroupWorkflow HardwareDevices
        SubscribeSubject RigConfigs
        -> PropertyMapping(PortName(Selector=COMPortTimestampGenerator))
        -> GroupWorkflow TimestampGenerator
            BooleanProperty(Value=false)
            -> Bonsai.Harp.SynchronizeTimestamp => #1
            Harp.TimestampGeneratorGen3.CreateMessage(MessageType=Write, Payload=Harp.TimestampGeneratorGen3.CreateTimerFrequencyPayload(TimerFrequency=Timer1000Hz)) => #2
            #1, #2 -> Merge => #3
            ExternalizedMapping(PortName) => #4
            #3, #4 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
            -> PublishSubject ClockSynchronizerEvents
            -> WorkflowOutput

            GroupWorkflow Timestamps
                SubscribeSubject ClockSynchronizerEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
                -> PublishSubject Heartbeats

                SubscribeSubject ClockSynchronizerEvents
                -> Harp.TimestampGeneratorGen3.Parse(Register=Harp.TimestampGeneratorGen3.TimestampedTimer)
                -> InputMapping(Value(Selector=it.Seconds))
                -> DoubleProperty(Value=3870675197.696)
                -> BehaviorSubject Timestamp => #8
                SubscribeSubject Timestamp
                -> Take(Count=1) => #10
                #8, #10 -> WithLatestFrom
                -> Subtract
                -> BehaviorSubject Timebase
                -> WorkflowOutput

        SubscribeSubject RigConfigs
        -> PropertyMapping(PortName(Selector=COMPortBehaviourBoard), PulseDO1(Selector=ValveOpenTimeLeft), PulseDO2(Selector=ValveOpenTimeRight))
        -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName)
            -> IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorCommands
              PortName=COM10
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorEvents

            GroupWorkflow RunningWheel
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position)) => #1
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
                #0, #1, #2 -> Merge => #3
                ExternalizedMapping => #4
                  Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
                #3, #4 -> MulticastSubject BehaviorCommands => #5
                ExternalizedMapping => #6
                  Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
                -> SubscribeSubject BehaviorEvents => #7
                #5, #7 -> SubscribeWhen
                #6 -> SubscribeSubject BehaviorEvents
                -> DelaySubscription(DueTime=PT0.1S)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
                -> MemberSelector(Selector=Encoder)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
                  Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
                -> Accumulate => #15
                ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
                #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
                    Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
                    ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
                    -> IntProperty(Value=170)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
                      Expression: (it*Math.Pi)/10
                    -> PropertyMapping(Value) => #6
                    #2, #6 -> Multiply(Operand=FloatProperty(Value=53.407074))
                    -> WorkflowOutput
                ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
                #17, #18 -> PublishSubject WheelDistanceCm

            ExternalizedMapping(PulseDO1, PulseDO2)
            -> IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorCommands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=55
              PulseDO2=28
              PulseDO3=20
              BehaviorEventsSubjectName=BehaviorEvents
              TriggerPulseSubjectName=TriggerValve

            GroupWorkflow CameraTriggerController
                BehaviorSubject<System.Object> StartCameras
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #1
                BehaviorSubject<System.Object> StopCameras
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #3
                ExternalizedMapping(Value(DisplayName=Trigger0Frequency, Description="The frequency, in Hz, at which to trigger cameras on Trigger0"))
                -> DoubleProperty(Value=50)
                -> BehaviorSubject Trigger0Frequency
                -> PropertyMapping(Camera0Frequency)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=50))
                -> Take(Count=1) => #9
                ExternalizedMapping(Value(DisplayName=Trigger1Frequency, Description="The frequency, in Hz, at which to trigger cameras on Trigger1"))
                -> DoubleProperty(Value=50)
                -> BehaviorSubject Trigger1Frequency
                -> PropertyMapping(Camera1Frequency)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera1FrequencyPayload(Camera1Frequency=50))
                -> Take(Count=1) => #15
                #9, #15 -> Concat => #16
                #1, #3, #16 -> Merge => #17
                ExternalizedMapping => #18
                  Name
                    DisplayName=BehaviorCommandsSubjectName
                    Description="The name of the commands subject for the behavior board that triggers camera frames"
                    Category=Subjects
                #17, #18 -> MulticastSubject BehaviorCommands => #19
                ExternalizedMapping => #20
                  Name
                    DisplayName=BehaviorEventsSubjectName
                    Description="The name of the subject carrying events from the behavior board that triggers camera frames"
                    Category=Subjects
                -> SubscribeSubject BehaviorEvents
                -> Delay(DueTime=PT0.5S) => #22
                #19, #22 -> SubscribeWhen
                -> WorkflowOutput
                #20 -> SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #26
                ExternalizedMapping => #27
                  Name
                    DisplayName=Camera0TriggerEventsSubjectName
                    Description="The name of the subject to which timestamped camera trigger events Trigger0 are published"
                    Category=Subjects
                #26, #27 -> PublishSubject Camera0TriggerEvents
                #20 -> SubscribeSubject BehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame) => #30
                ExternalizedMapping => #31
                  Name
                    DisplayName=Camera1TriggerEventsSubjectName
                    Description="The name of the subject to which timestamped camera trigger events Trigger1 are published"
                    Category=Subjects
                #30, #31 -> PublishSubject Camera1TriggerEvents

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT1S)
            -> MulticastSubject StartCameras

        GroupWorkflow LicketySplits
            SubscribeSubject RigConfigs => #0
            -> PropertyMapping(PortName(Selector=COMPortLicketySplitRight))
            -> GroupWorkflow LicketySplit
                ExternalizedMapping(Name(DisplayName=CommandsSubjectName, Description='The name of the input "commands" Subject', Category=Subjects)) => #0
                -> BehaviorSubject<Bonsai.Harp.HarpMessage> LickCommandsRight => #1
                ExternalizedMapping(PortName, DumpRegisters, Heartbeat) => #2
                #1, #2 -> AllenNeuralDynamics.LicketySplit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12) => #3
                ExternalizedMapping(Name(DisplayName=EventsSubjectName, Description='The name of the output "Events" Subject', Category=Subjects)) => #4
                #3, #4 -> PublishSubject LickEventsRight
                -> DelaySubscription(DueTime=PT0.5S)
                -> WorkflowOutput
                #4 -> SubscribeSubject LickEventsRight
                -> Take(Count=1) => #9
                ExternalizedMapping(Channel0TriggerThreshold) => #10
                #9, #10 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0TriggerThresholdPayload(Channel0TriggerThreshold=0)) => #11
                ExternalizedMapping(Channel0UntriggerThreshold) => #12
                #11, #12 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0UntriggerThresholdPayload(Channel0UntriggerThreshold=0)) => #13
                #13, #11 -> Merge => #14
                #14, #0 -> MulticastSubject LickCommandsRight
                #4 -> SubscribeSubject LickEventsRight
                -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
                -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0)) => #18
                ExternalizedMapping => #19
                  Name
                    DisplayName=LickStateSubjectName
                    Description="The name of the subject that carries the state of the lick detector whenever it changes. HIGH when lick is detected, LOW when not."
                    Category=Subjects
                #18, #19 -> PublishSubject LickStateRight
            #0 -> PropertyMapping(PortName(Selector=COMPortLicketySplitLeft))
            -> GroupWorkflow LicketySplit
                ExternalizedMapping(Name(DisplayName=CommandsSubjectName, Description='The name of the input "commands" Subject', Category=Subjects)) => #0
                -> BehaviorSubject<Bonsai.Harp.HarpMessage> LickCommandsLeft => #1
                ExternalizedMapping(PortName, DumpRegisters, Heartbeat) => #2
                #1, #2 -> AllenNeuralDynamics.LicketySplit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM11) => #3
                ExternalizedMapping(Name(DisplayName=EventsSubjectName, Description='The name of the output "Events" Subject', Category=Subjects)) => #4
                #3, #4 -> PublishSubject LickEventsLeft
                -> DelaySubscription(DueTime=PT0.5S)
                -> WorkflowOutput
                #4 -> SubscribeSubject LickEventsLeft
                -> Take(Count=1) => #9
                ExternalizedMapping(Channel0TriggerThreshold) => #10
                #9, #10 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0TriggerThresholdPayload(Channel0TriggerThreshold=0)) => #11
                ExternalizedMapping(Channel0UntriggerThreshold) => #12
                #11, #12 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0UntriggerThresholdPayload(Channel0UntriggerThreshold=0)) => #13
                #13, #11 -> Merge => #14
                #14, #0 -> MulticastSubject LickCommandsLeft
                #4 -> SubscribeSubject LickEventsLeft
                -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
                -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0)) => #18
                ExternalizedMapping => #19
                  Name
                    DisplayName=LickStateSubjectName
                    Description="The name of the subject that carries the state of the lick detector whenever it changes. HIGH when lick is detected, LOW when not."
                    Category=Subjects
                #18, #19 -> PublishSubject LickStateLeft

        GroupWorkflow Cameras
            SubscribeSubject RigConfigs => #0
            -> MemberSelector(Selector=SerialNumberCamera1)
            -> PropertyMapping(SerialNumber)
            -> GroupWorkflow TriggeredSpinnaker
                ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing)
                -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=23201540, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
                -> Disable ElementIndex => #2
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera0TriggerEvents
                -> MemberSelector(Selector=Seconds) => #5
                #2, #5 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Disable GroupWorkflow Monitor => #8
                    ExternalizedMapping(Value)
                    -> StringProperty(Value=Cam1Frame)
                    -> Take(Count=1)
                    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #3
                    WorkflowInput Source1
                    -> Materialize => #5
                    #3, #5 -> CombineLatest
                    -> Bonsai.IO.WriteLine
                    -> MemberSelector(Selector=Item2)
                    -> Dematerialize
                    -> WorkflowOutput
                ExternalizedMapping => #9
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #8, #9 -> BehaviorSubject FrameEvents1
            #0 -> MemberSelector(Selector=SerialNumberCamera2)
            -> PropertyMapping(SerialNumber)
            -> GroupWorkflow TriggeredSpinnaker
                ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing)
                -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=23199185, ColorProcessing=Default, ExposureTime=19000, Gain=20, Binning=1)
                -> Disable ElementIndex => #2
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera0TriggerEvents
                -> MemberSelector(Selector=Seconds) => #5
                #2, #5 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Disable GroupWorkflow Monitor => #8
                    ExternalizedMapping(Value)
                    -> StringProperty(Value=Cam2Frame)
                    -> Take(Count=1)
                    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #3
                    WorkflowInput Source1
                    -> Materialize => #5
                    #3, #5 -> CombineLatest
                    -> Bonsai.IO.WriteLine
                    -> MemberSelector(Selector=Item2)
                    -> Dematerialize
                    -> WorkflowOutput
                ExternalizedMapping => #9
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #8, #9 -> BehaviorSubject FrameEvents2
            #0 -> MemberSelector(Selector=SerialNumberCamera3)
            -> PropertyMapping(SerialNumber)
            -> GroupWorkflow TriggeredSpinnaker
                ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing)
                -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=25366329, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
                -> Disable ElementIndex => #2
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera0TriggerEvents
                -> MemberSelector(Selector=Seconds) => #5
                #2, #5 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Disable GroupWorkflow Monitor => #8
                    ExternalizedMapping(Value)
                    -> StringProperty(Value=Cam3Frame)
                    -> Take(Count=1)
                    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #3
                    WorkflowInput Source1
                    -> Materialize => #5
                    #3, #5 -> CombineLatest
                    -> Bonsai.IO.WriteLine
                    -> MemberSelector(Selector=Item2)
                    -> Dematerialize
                    -> WorkflowOutput
                ExternalizedMapping => #9
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #8, #9 -> BehaviorSubject FrameEvents3

        GroupWorkflow StepperDriver
            SubscribeSubject RigConfigs
            -> PropertyMapping(StepperDriver1PortName(Selector=COMPortStepperDriver1), StepperDriver2PortName(Selector=COMPortStepperDriver2))
            -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM7)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_LeftIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_RightIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPositionCommand

                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                IntProperty(Value=0) => #7
                IntProperty(Value=0) => #8
                IntProperty(Value=0) => #9
                #5, #6, #7, #8, #9 -> Zip => #10
                -> BehaviorSubject StepperPosition_HOME
                #10 -> Disable Delay(DueTime=PT2.5S) => #12
                Disable Annotation "Init by Moving to ZERO"(Text="Init by Moving to ZERO") => #13
                #12, #13 -> Disable BehaviorSubject StepperPositionCommand

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    Disable IntProperty(Value=100) => #18
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #20
                    #18 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #22
                    #18 -> Disable PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    Disable IntProperty(Value=100) => #15
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #17
                    #15 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip
                -> Unit
                -> Delay(DueTime=PT2S)
                -> BooleanProperty(Value=true)
                -> MulticastSubject SteppersZEROed
                -> Unit
                -> SelectMany SendSpoutInCommand
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                -> Unit
                -> WorkflowOutput

                Disable Annotation "Need to give motors time to reach ZERO before moving again"(Text="Need to give motors time to reach ZERO before moving again")
                -> Disable Timer(DueTime=PT4S)
                -> Disable SelectMany SendSpoutInCommand => #16
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                Disable IncludeWorkflow => #17
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                Disable IncludeWorkflow => #18
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                Disable IncludeWorkflow => #19
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                Disable IncludeWorkflow => #20
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                Disable IncludeWorkflow => #21
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #17, #18, #19, #20, #21 -> Disable Zip => #22
                #16, #22 -> Disable SubscribeWhen
                -> Disable Delay(DueTime=PT2S)
                -> Disable WorkflowOutput

            GroupWorkflow MoveMotors
                SubscribeSubject StepperPositionCommand
                -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

    SubscribeSubject RigConfigs => #6
    -> PropertyMapping(FileName(Selector=MeshMapFilePath)) => #7
    #6 -> PropertyMapping(GammaLut(Selector=GammaLUTFilePath)) => #8
    ExternalizedMapping(DisplayDevice) => #9
    #7, #8, #9 -> GroupWorkflow BonvisionResources
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv) => #8
        ExternalizedMapping(GammaLut) => #9
        #8, #9 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)

    GroupWorkflow RewardCounter
        SubscribeSubject TriggerValve
        -> SelectMany IncrementRewardCounter
            SubscribeSubject WaterDelivered => #0
            Disable SubscribeSubject thisTrialData
            -> Disable MemberSelector(Selector=RewardSizeInUl) => #2
            Annotation "Hardcoded for now!!!"(Text="Hardcoded for now!!!") => #3
            #2, #3 -> FloatProperty(Value=2) => #4
            #0, #4 -> Zip
            -> Add
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject WaterDelivered

    GroupWorkflow Audio
        ExternalizedMapping
          BackgroundPath(Category="Audio Paths")
          GoCuePath(Category="Audio Paths")
          PinkNoisePath(Category="Audio Paths")
          ErrorSoundPath(Category="Audio Paths")
        -> GroupWorkflow LoadAudioFiles
            ExternalizedMapping(FileName(DisplayName=BackgroundPath))
            -> Disable Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\background_white_noise.wav, BufferLength=0, SampleRate=0)
            -> Disable Take(Count=1)
            -> Disable Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Disable Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.1, Shift=0)
            -> Disable AsyncSubject waveformBackground

            ExternalizedMapping(FileName(DisplayName=PinkNoisePath))
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\filtered_pink_pulse_train.wav, BufferLength=0, SampleRate=0)
            -> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=1, StartCol=0, EndCol=3000)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformPinkNoise

            ExternalizedMapping(FileName(DisplayName=GoCuePath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\go_cue.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformGoCue

            ExternalizedMapping(FileName(DisplayName=ErrorSoundPath))
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformErrorSound

            SubscribeSubject waveformPinkNoise
            -> MemberSelector(Selector=Cols)
            -> PropertyMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)
            -> Take(Count=1)
            -> AsyncSubject PinkNoiseSync

            SubscribeSubject waveformGoCue
            -> MemberSelector(Selector=Cols)
            -> PropertyMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)
            -> Take(Count=1)
            -> AsyncSubject GoCueSync

        GroupWorkflow SpeakerLocations
            Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #1
            Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #3
            Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #5
            #1, #3, #5 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        GroupWorkflow MixerDevice => #3
            Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
            -> Bonsai.Mixer.StartMixer
            -> BehaviorSubject Mixer
            -> Disable WorkflowOutput

            SubscribeSubject Mixer
            -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
            -> MulticastSubject MixerStimSource

            SubscribeSubject Mixer
            -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
            -> MulticastSubject MixerErrorSoundSource

            BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #10
            BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerStimSource => #11
            #10, #11 -> Bonsai.Mixer.AppendBuffer

            BehaviorSubject<OpenCV.Net.Mat> MixerBufferErrorSound => #13
            BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerErrorSoundSource => #14
            #13, #14 -> Bonsai.Mixer.AppendBuffer
        Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #4
        #3, #4 -> DelaySubscription(DueTime=PT3S)

        ExternalizedMapping(Value(DisplayName=ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=0)
        -> BehaviorSubject ActiveSoundChannels

        BehaviorSubject<System.Boolean> StartAuditoryStimulus
        -> SelectMany PlayStim
            SubscribeSubject waveformPinkNoise
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #8
            #4, #8 -> ChannelActivation(Channels(int=0), Gain(double=1)) => #9
            SubscribeSubject PinkNoiseSync
            -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels(int=31), Gain(double=0.2)) => #12
            #9, #12 -> Zip
            -> Add
            -> MulticastSubject MixerBuffer

        Disable BehaviorSubject<System.Boolean> StartAuditoryGoCue
        -> Disable SelectMany PlayGo
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=WaveformSubjectName))
            -> SubscribeSubject AudioGoCueAll => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput

            SubscribeSubject waveformGoCue
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #9
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #11
            #9, #11 -> Broadcast(ChannelCount=32)
            -> ChannelActivation => #13
              Channels
                int=0
                int=1
                int=2
                int=3
                int=4
                int=5
                int=6
                int=7
                int=8
                int=9
                int=10
                int=11
                int=12
                int=13
                int=14
                int=15
                int=16
                int=17
                int=18
                int=19
                int=20
                int=21
                int=22
                int=23
                int=24
                int=25
                int=26
                int=27
                int=28
                int=29
                int=30
              Gain(double=0.02)
            SubscribeSubject GoCueSync
            -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels(int=31), Gain(double=0.2)) => #16
            #13, #16 -> Zip
            -> Add
            -> AsyncSubject AudioGoCueAll

        BehaviorSubject<System.Boolean> StartAuditoryErrorSound
        -> SelectMany PlayErrorSound
            SubscribeSubject waveformErrorSound
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            IntProperty(Value=2)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #8
            #4, #8 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBufferErrorSound

        ExternalizedMapping(BufferLength)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=441, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)

        Disable Defer PlayBackground
            SubscribeSubject waveformBackground
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32) => #5
            SubscribeSubject ChannelCount
            -> PropertyMapping(Count) => #7
            Source2=#7 -> Range(Start=0, Count=32)
            -> ToArray
            -> PropertyMapping(Channels) => #10
            #5, #10 -> ChannelActivation
              Channels
                int=0
                int=1
                int=2
                int=3
                int=4
                int=5
                int=6
                int=7
                int=8
                int=9
                int=10
                int=11
                int=12
                int=13
                int=14
                int=15
                int=16
                int=17
                int=18
                int=19
                int=20
                int=21
                int=22
                int=23
                int=24
                int=25
                int=26
                int=27
                int=28
                int=29
                int=30
                int=31
              Gain(double=0.02)
            -> WorkflowOutput
        -> Disable MulticastSubject MixerBuffer
        -> Disable DelaySubscription(DueTime=PT2S)

GroupWorkflow InitialiseTrials
    Annotation "Read Schema defining what makes valide trial settings"(Text="Read Schema defining what makes valide trial settings")
    -> Bonsai.IO.ReadAllText(Path=C:\dev\av-dome\schemas\session.yml)
    -> DataSchema.DeserializeFromYaml(Type=TypeMapping<DataSchema.AvTask>)
    -> AsyncSubject TrialConfig

    Annotation "Initialized first trial"(Text="Initialized first trial")
    -> SubscribeSubject TrialConfig
    -> TrialTypeInitialise(autoRewardProbability=0, BothSpoutsProbability=1, RewardSizeInUl=4, Seed=-1, trainingStageId=1, TrialType=-1, WasCorrect=true, WasTimeout=false)
    -> BehaviorSubject thisTrialData
    -> Take(Count=1)
    -> SelectMany SetTrialVars
        WorkflowInput Source1 => #0
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=visualAzimuth) => #2
        -> MulticastSubject visualAzimuthStart
        #2 -> MulticastSubject visualAzimuth

        IntProperty(Value=0)
        -> MulticastSubject DecisionVariable

GroupWorkflow GUI
    Timer(DueTime=PT0S, Period=PT1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it).ToString()
    -> BehaviorSubject sessionTime => #2
    SubscribeSubject StartSession
    -> Skip(Count=1) => #4
    #2, #4 -> SubscribeWhen

    Annotation "Need the init for Spouts"(Text="Need the init for Spouts")
    -> BooleanProperty(Value=false)
    -> BehaviorSubject StartSession

    BooleanProperty(Value=false) => #9
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=true) => #11
    #9, #11 -> Merge
    -> Delay(DueTime=PT2S)
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder StartExperiment(Enabled=true, Visible=true, Text=Start) => #15
    -> BooleanProperty(Value=true)
    -> MulticastSubject StartSession
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text="Set Mouse ID") => #18
    -> BooleanProperty(Value=true)
    -> Condition "True? Pressed"
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AsyncSubject MouseIDSet
    BooleanProperty(Value=true) => #23
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=false) => #25
    #23, #25 -> Merge
    -> PropertyMapping(Enabled) => #27
    -> Bonsai.Gui.ComboBoxBuilder "Mouse ID"
      Enabled=false
      Visible=true
      Items(string=Dummy, string=GN011, string=GN012, string=GN013, string=GN014, string=GN015, string=AM009, string=AM018, string=AM020)
      SelectedItem=Dummy
    -> BehaviorSubject MouseID
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Mouse ID"(Enabled=true, Visible=true, Text="Mouse ID")
    -> VisualizerMapping => #32
    #27 -> Bonsai.Gui.ComboBoxBuilder Training(Enabled=false, Visible=true, Items(string="Stage 0", string="Stage 1", string="Stage 2", string="Stage 3", string="Stage 4"), SelectedItem="Stage 0")
    -> BehaviorSubject trainingStageStr
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Training Stage"(Enabled=true, Visible=true, Text="Training Stage")
    -> VisualizerMapping => #37
    #18 -> VisualizerMapping => #38
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #40
    SubscribeSubject sessionTime
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=00:01:02)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Session Time"(Enabled=true, Visible=true, Text="Session Time")
    -> VisualizerMapping => #46
    SubscribeSubject TrialCount
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=6)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Trial Count"(Enabled=true, Visible=true, Text="Trial Count")
    -> VisualizerMapping => #53
    SubscribeSubject thisTrialData => #54
    -> MemberSelector(Selector=targetSide)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Target Side"(Enabled=true, Visible=true, Text="Target Side")
    -> VisualizerMapping => #60
    #54 -> MemberSelector(Selector=autoReward)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Auto Reward"(Enabled=true, Visible=true, Text="Auto Reward")
    -> VisualizerMapping => #67
    #54 -> MemberSelector(Selector=trialType)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=2)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder TrialType(Enabled=true, Visible=true, Text=TrialType)
    -> VisualizerMapping => #74
    #54 -> MemberSelector(Selector=visualAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=-60)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Visual Location"(Enabled=true, Visible=true, Text="Visual Location")
    -> VisualizerMapping => #81
    #54 -> MemberSelector(Selector=audioAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=-60)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Auditory Location"(Enabled=true, Visible=true, Text="Auditory Location")
    -> VisualizerMapping => #88
    #54 -> MemberSelector(Selector=RewardSizeInUl)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=4)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Reward Size"(Enabled=true, Visible=true, Text="Reward Size")
    -> VisualizerMapping => #95
    SubscribeSubject WaterDelivered
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=16)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Water Delivered in ul"(Enabled=true, Visible=true, Text="Water Delivered in ul")
    -> VisualizerMapping => #102
    SubscribeSubject PerformanceTracker => #103
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #104
      Expression: Item1 + Item2
    -> Condition 0?
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #106
    #104 -> Condition "not 0?" => #107
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> BitwiseNot
        -> WorkflowOutput
    #103, #107 -> Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #109
      Expression: 100 * Double(Item1) / Double(Item1 + Item2)
    #106, #109 -> Merge
    -> Format(Format={0:F2}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0.00)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Performance (%)"(Enabled=true, Visible=true, Text="Performance (%)")
    -> VisualizerMapping => #116
    #32, #37, #38, #40, #46, #53, #60, #67, #74, #81, #88, #95, #102, #116 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=8
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #120
    #15 -> VisualizerMapping => #121
    SubscribeSubject FrameEvents1
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #127
    SubscribeSubject FrameEvents2
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #133
    SubscribeSubject FrameEvents3
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #139
    #127, #133, #139 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #143
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateLeft
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping => #149
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateRight
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping => #155
    #149, #155 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Lick indicators")
    -> VisualizerMapping => #159
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #161
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #163
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #167
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="5900,6040,4610,1500,0;")
    -> VisualizerMapping => #172
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #175
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #179
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #181
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #184
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #187
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #190
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #192
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #195
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #198
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #200
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #203
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #205
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #208
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #210
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text=ZERO)
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #213
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #216
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #219
    SubscribeSubject StepperStepSize
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=150, Multiline=false) => #224
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #227
    Bonsai.Gui.ButtonBuilder SaveSpoutPositions(Enabled=true, Visible=true, Text=SaveSpoutPositions)
    -> PublishSubject SaveSpoutPositions
    -> VisualizerMapping => #230
    #161, #163, #167, #172, #175, #179, #181, #184, #187, #190, #192, #195, #198, #200, #203, #205, #208, #210, #213, #216, #219, #227, #230 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=5, RowSpan=1)
    -> VisualizerMapping => #232
    BooleanProperty(Value=false) => #233
    SubscribeSubject MouseIDSet => #234
    SubscribeSubject SteppersZEROed => #235
    #234, #235 -> CombineLatest
    -> BitwiseAnd => #237
    #233, #237 -> Merge
    -> PropertyMapping(Enabled) => #239
    #232, #239 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #241
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #244
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #247
    #244, #247 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #249
    BooleanProperty(Value=false) => #250
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=true) => #252
    #250, #252 -> Merge
    -> PropertyMapping(Enabled) => #254
    #249, #254 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Flush Valves")
    -> VisualizerMapping => #256
    SubscribeSubject WheelDistanceCm
    -> SampleInterval(Interval=PT0.5S) => #258
    -> Skip(Count=1) => #259
    #259, #258 -> Zip
    -> Subtract
    -> Multiply(Operand=DoubleProperty(Value=1))
    -> VisualizerMapping => #263
    SubscribeSubject thisTrialData => #264
    Annotation "Y define which sideto indicate for"(Text="Y define which sideto indicate for") => #265
    #264, #265 -> MemberSelector(Selector=targetSide) => #266
    -> Condition Left?
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Left))
        -> WorkflowOutput
    -> FloatProperty(Value=0.2) => #268
    #266 -> Condition "Not Left?"
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Left))
        -> BitwiseNot
        -> WorkflowOutput
    -> FloatProperty(Value=0.8) => #270
    #268, #270 -> Merge => #271
    SubscribeSubject ResponseData => #272
    #264 -> MemberSelector(Selector=BothSpouts) => #273
    #272, #273 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #275
      Expression: new(Item1.CorrectResponse as CorrectResponse, Item1.TrialCnt as TrialCnt, Item2 as BothSpouts)
    Annotation "X trialCnt"(Text="X trialCnt") => #276
    #275, #276 -> MemberSelector(Selector=TrialCnt) => #277
    #271, #277 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #279
      Expression: new (Item2 as X, Item1 as Y)
    Annotation "Color to plot?"(Text="Color to plot?") => #280
    #275, #280 -> MemberSelector(Selector="CorrectResponse,BothSpouts") => #281
    -> Condition Correct? => #282
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Correct)) => #2
        #0 -> MemberSelector(Selector=Item2) => #3
        #2, #3 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    #279, #282 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Correct, Color=Lime))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #285
    #281 -> Condition Incorrect? => #286
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Incorrect)) => #2
        #0 -> MemberSelector(Selector=Item2) => #3
        #2, #3 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    #279, #286 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Incorrect, Color=Red))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #289
    #281 -> Condition NoResponse? => #290
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=NoResponse))
        -> WorkflowOutput
    #279, #290 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=NoResponse, Color=Blue))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #293
    #281 -> Condition AutoRewarded? => #294
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=AutoRewarded)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> BitwiseNot => #4
        #0 -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=NoResponse))
        -> BitwiseNot => #7
        #4, #7 -> Zip
        -> BitwiseAnd => #9
        #2, #9 -> Zip
        -> BitwiseOr
        -> WorkflowOutput
    #279, #294 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=AutoRewarded, Color=Gray))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #297
    #285, #289, #293, #297 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder "Response History"(ReverseX=false, ReverseY=false, Span=nil, Capacity=60, XMin=nil, XMax=nil, YMin=-0.2, YMax=1.2)
    -> VisualizerMapping => #299
    #263, #299 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Performance)
    -> VisualizerMapping => #303
    #120, #121, #143, #159, #241, #256, #303 -> Bonsai.Gui.TableLayoutPanelBuilder "AV Dome"
      Enabled=true
      Visible=true
      ColumnCount=4
      RowCount=8
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=8)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=3)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=3)
    #224 -> SelectMany SetSubjectValue
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> MulticastSubject StepperStepSize => #2
        #0, #2 -> Sample
        -> WorkflowOutput

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    Defer RunningPerformanceBuffer
        SubscribeSubject TrialSuccess
        -> Condition NotNoResponse
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Equal(Operand=StringProperty(Value=Correct))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Convert.ToSingle(it)
        Annotation PerformanceSlidingWindow(Text="Consider replacing this with an input parameter from schema / yml")
        -> IntProperty(Value=10) => #5
        #3, #5 -> WithLatestFrom
        -> GroupWorkflow GetAverage
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #3
            #1, #3 -> BufferCount(Count=10, Skip=1) => #4
            -> Add => #5
            #4 -> MemberSelector(Selector=Count) => #6
            #5, #6 -> Zip
            -> Divide
            -> WorkflowOutput
        -> WorkflowOutput
    -> PublishSubject RunningPerformance

    SubscribeSubject ResponseData => #310
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #312
    #310, #312 -> WithLatestFrom
    -> SelectMany
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: new(Item1.CorrectResponse as CorrectResponse, Item1.Response as ResponseType, Item1.TrialCnt as TrialCnt, Item2 as BothSpouts)
        -> Condition Correct? => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        SubscribeSubject PerformanceTracker => #3
        #2, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> MemberSelector(Selector=Item1)
        -> Add(Operand=IntProperty(Value=1)) => #7
        #5 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #1 -> Condition Incorrect? => #10
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        #10, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #12
        -> MemberSelector(Selector=Item1) => #13
        #12 -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1)) => #15
        #13, #15 -> Zip => #16
        #1 -> Condition Neither? => #17
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd => #5
            #0 -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #7
            #0 -> MemberSelector(Selector=BothSpouts) => #8
            #7, #8 -> Zip
            -> BitwiseAnd => #10
            #5, #10 -> Zip
            -> BitwiseOr
            -> BitwiseNot
            -> WorkflowOutput
        #17, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        #9, #16, #19 -> Amb
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject PerformanceTracker

    IntProperty(Value=0) => #316
    IntProperty(Value=0) => #317
    #316, #317 -> Zip
    -> BehaviorSubject PerformanceTracker

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")
        -> GroupWorkflow "Position Update"(Description="Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn => #13
            Annotation "Sends command with every update"(Text="Sends command with every update") => #14
            #13, #14 -> SelectMany "Send command when session not running" => #15
                WorkflowInput Source1 => #0
                SubscribeSubject StartSession => #1
                #0, #1 -> WithLatestFrom => #2
                -> Condition "Send Command?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject StepperPositionCommand => #5
                #2 -> Condition "Don't send?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #7
                #5, #7 -> Merge => #8
                #2, #8 -> Sample
                -> WorkflowOutput
            GroupWorkflow "Init Positions"(Description="Init Positions") => #16
                Disable Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> Disable IntProperty(Value=3550)
                -> Disable BehaviorSubject Motor1_Position => #2
                Disable Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> Disable IntProperty(Value=5500)
                -> Disable BehaviorSubject Motor2_Position => #5
                Disable Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> Disable IntProperty(Value=4700)
                -> Disable BehaviorSubject Motor3_Position => #8
                Disable Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> Disable IntProperty(Value=2150)
                -> Disable BehaviorSubject Motor4_Position => #11
                Disable Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> Disable IntProperty(Value=950)
                -> Disable BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Disable Merge
                -> Disable WorkflowOutput

                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=StepperMotorDefaultPosition) => #18
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #19
                #18, #19 -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject Motor1_Position => #21
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #22
                #18, #22 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject Motor2_Position => #24
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #25
                #18, #25 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject Motor3_Position => #27
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #28
                #18, #28 -> Index(Operand=IntProperty(Value=3))
                -> BehaviorSubject Motor4_Position => #30
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #31
                #18, #31 -> Index(Operand=IntProperty(Value=4))
                -> BehaviorSubject Motor5_Position => #33
                #21, #24, #27, #30, #33 -> Merge
                -> WorkflowOutput
            #15, #16 -> SubscribeWhen => #17
            SubscribeSubject SteppersZEROed => #18
            #17, #18 -> SubscribeWhen

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #21
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #24
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #27
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #30
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #33
            #21, #24, #27, #30, #33 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #37
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #39
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #42
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #44
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #47
            #37, #39, #42, #44, #47 -> CombineLatest
            -> MulticastSubject StepperPosition_LeftIN

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #51
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #54
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #56
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #59
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #61
            #51, #54, #56, #59, #61 -> CombineLatest
            -> MulticastSubject StepperPosition_RightIN

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")
        -> GroupWorkflow PositionButtonCallbacks(Description="PositionButtonCallbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")
        -> SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    Annotation "RigConfig Folder"(Text="RigConfig Folder")
    -> StringProperty(Value=C:\RigConfigs\LickSpoutPositions\) => #3
    SubscribeSubject MouseIDSet => #4
    SubscribeSubject MouseID => #5
    #4, #5 -> WithLatestFrom => #6
    Annotation "Ones MouseID is confirmed, set FileName"(Text="Ones MouseID is confirmed, set FileName") => #7
    #6, #7 -> MemberSelector(Selector=Item2)
    -> Take(Count=1) => #9
    #3, #9 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2+".csv"
    -> Take(Count=1)
    -> BehaviorSubject SpoutPositionFileName

    SubscribeSubject SpoutPositionFileName
    -> PropertyMapping(FileName) => #15
    SubscribeSubject SaveSpoutPositions => #16
    SubscribeSubject SpoutPositionFileName => #17
    #16, #17 -> SubscribeWhen => #18
    Disable Annotation "Should be GUI button to save"(Text="Should be GUI button to save")
    -> Disable Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=true) => #20
    #15, #18, #20 -> SelectMany WritePositions
        WorkflowInput Source1

        SubscribeSubject Motor1_Position => #1
        SubscribeSubject Motor2_Position => #2
        SubscribeSubject Motor3_Position => #3
        SubscribeSubject Motor4_Position => #4
        SubscribeSubject Motor5_Position => #5
        #1, #2, #3, #4, #5 -> Zip
        -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #7
        ExternalizedMapping(FileName) => #8
        #7, #8 -> Bonsai.IO.CsvWriter
          FileName=C:\RigConfigs\LickSpoutPositions\Dummy.csv
          Delimiter=","
          ListSeparator=;
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
          Selector=it
        -> Take(Count=1)
        -> WorkflowOutput

    SubscribeSubject SpoutPositionFileName
    -> SelectMany ReadPositions
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject _fName

        SubscribeSubject _fName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject _fName
        -> FileExists => #6
        -> Condition True? => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #7 -> SelectMany LoadSpoutPositions
            WorkflowInput Source1

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=C:\RigConfigs\LickSpoutPositions\Dummy.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #2
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Motor1_Position => #4
            #2 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Motor2_Position => #6
            #2 -> MemberSelector(Selector=Item3)
            -> MulticastSubject Motor3_Position => #8
            #2 -> MemberSelector(Selector=Item4)
            -> MulticastSubject Motor4_Position => #10
            #2 -> MemberSelector(Selector=Item5)
            -> MulticastSubject Motor5_Position => #12
            #4, #6, #8, #10, #12 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6 -> Condition False? => #10
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9, #10 -> Merge
        -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject MouseIDSet => #0
    SubscribeSubject MouseID => #1
    SubscribeSubject trainingStageStr => #2
    #1, #2 -> CombineLatest => #3
    #0, #3 -> WithLatestFrom
    -> Take(Count=1)
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #7
    StringProperty(Value=C:\Data\AV_Dome_ClosedLoop)
    -> PropertyMapping(Path) => #9
    #7, #9 -> IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=Dummy, SessionId="Stage 0", Path=C:\Data\AV_Dome_ClosedLoop)
    -> DelaySubscription(DueTime=PT1S) => #11
    SubscribeSubject MouseIDSet => #12
    #11, #12 -> SubscribeWhen

    GroupWorkflow TrialParameters
        SubscribeSubject ResponseData => #0
        SubscribeSubject thisTrialData => #1
        #0, #1 -> Zip
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
                Seconds as Seconds,
                Value.Item1.CorrectResponse as correctResponse,
                Value.Item1.Response as response,
                Value.Item1.TrialCnt as TrialCnt,
                Value.Item2.trialType as trialType,
                Value.Item2.RewardProbability as RewardProbability,
                Value.Item2.IsRewarded as IsRewarded,
                Value.Item2.IsRepeat as IsRepeat,
                Value.Item2.RepeatCount as RepeatCount,
                Value.Item2.targetSide as targetSide,
                Value.Item2.ITI as ITI,
                Value.Item2.autoRewardProbability as autoRewardProbability,
                Value.Item2.autoReward as autoReward,
                Value.Item2.largeReward as largeReward,
                Value.Item2.RewardSizeInUl as RewardSizeInUl,
                Value.Item2.BothSpouts as BothSpouts,
                Value.Item2.visualAzimuth as visualAzimuth,
                Value.Item2.visualContrast as visualContrast,
                Value.Item2.visualPhase as visualPhase,
                Value.Item2.audioAzimuth as audioAzimuth,
                Value.Item2.OptogeneticEnabled as OptogeneticEnabled,
                Value.Item2.OptogeneticCondition as OptogeneticCondition,
                Value.Item2.OptogeneticDelay as OptogeneticDelay,
                Value.Item2.OptogeneticDuration as OptogeneticDuration,
                Value.Item2.OptogeneticPower as OptogeneticPower,
                Value.Item2.IncorrectTimeoutDuration as IncorrectTimeoutDuration,
                Value.Item2.LargeRewardMultiplier as LargeRewardMultiplier,
                Value.Item2.LargeRewardProbability as LargeRewardProbability,
                Value.Item2.BothSpoutsProbability as BothSpoutsProbability,
                Value.Item2.openLoopDuration as openLoopDuration,
                Value.Item2.closedLoopDuration as closedLoopDuration,
                Value.Item2.visualElevation as visualElevation,
                Value.Item2.visualGaussianWindowSigma as visualGaussianWindowSigma,
                Value.Item2.visualOrientation as visualOrientation,
                Value.Item2.visualSpatialFrequency as visualSpatialFrequency,
                Value.Item2.visualTemporalFrequency as visualTemporalFrequency,
                Value.Item2.visualFlickerFrequency as visualFlickerFrequency,
                Value.Item2.audioElevation as audioElevation,
                Value.Item2.audioFlickerFrequency as audioFlickerFrequency)
        -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName=TrialSettings, Selector="", Extension=csv)
        -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        SubscribeSubject BehaviorEvents
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> GroupWorkflow ExcludeAnalogDataMaybe
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
            -> BooleanProperty(Value=false) => #2
            #0, #2 -> WithLatestFrom => #3
            -> Condition Flagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
            #3 -> Condition NotFlagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #8
            #6, #8 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName="")

    GroupWorkflow Cameras
        SubscribeSubject PathPrefix
        -> SelectMany
            SubscribeSubject FrameEvents1
            -> Skip(Count=1)
            -> GroupWorkflow LogVideo
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name) => #1
                -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera1) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=csv)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #3
                #0, #3 -> Sink CsvWriter
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Seconds) => #1
                    #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                    #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                    #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                      Expression:
                        new(
                        Item1 as Seconds,
                        Item2 as Timestamp,
                        Item3 as FrameID,
                        Item4 as ExposureTime)
                    ExternalizedMapping(FileName) => #7
                    #6, #7 -> Bonsai.IO.CsvWriter
                      FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera1.csv"
                      Append=false
                      Overwrite=true
                      Suffix=None
                      IncludeHeader=true
                      Selector=""
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value.Image) => #5
                #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera1) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=avi)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #7
                ExternalizedMapping(FrameRate) => #8
                #5, #7, #8 -> Bonsai.Vision.VideoWriter
                  FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera1.avi"
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=FMP4
                  FrameRate=50
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor
                -> WorkflowOutput

            SubscribeSubject FrameEvents2
            -> Skip(Count=1)
            -> GroupWorkflow LogVideo
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name) => #1
                -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera2) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=csv)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #3
                #0, #3 -> Sink CsvWriter
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Seconds) => #1
                    #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                    #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                    #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                      Expression:
                        new(
                        Item1 as Seconds,
                        Item2 as Timestamp,
                        Item3 as FrameID,
                        Item4 as ExposureTime)
                    ExternalizedMapping(FileName) => #7
                    #6, #7 -> Bonsai.IO.CsvWriter
                      FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera2.csv"
                      Append=false
                      Overwrite=true
                      Suffix=None
                      IncludeHeader=true
                      Selector=""
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value.Image) => #5
                #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera2) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=avi)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #7
                ExternalizedMapping(FrameRate) => #8
                #5, #7, #8 -> Bonsai.Vision.VideoWriter
                  FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera2.avi"
                  Suffix=None
                  Buffered=true
                  Overwrite=true
                  FourCC=FMP4
                  FrameRate=50
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor
                -> WorkflowOutput

            SubscribeSubject FrameEvents3
            -> Skip(Count=1)
            -> GroupWorkflow LogVideo
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name) => #1
                -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera3) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=csv)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #3
                #0, #3 -> Sink CsvWriter
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Seconds) => #1
                    #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                    #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                    #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                      Expression:
                        new(
                        Item1 as Seconds,
                        Item2 as Timestamp,
                        Item3 as FrameID,
                        Item4 as ExposureTime)
                    ExternalizedMapping(FileName) => #7
                    #6, #7 -> Bonsai.IO.CsvWriter
                      FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera3.csv"
                      Append=false
                      Overwrite=true
                      Suffix=None
                      IncludeHeader=true
                      Selector=""
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value.Image) => #5
                #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                    SubscribeSubject PathPrefix => #0
                    StringProperty(Value=Cameras) => #1
                    ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                    -> StringProperty(Value=VideoData_Camera3) => #3
                    ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                    -> StringProperty(Value=avi)
                    -> Take(Count=1) => #6
                    #0, #1, #3, #6 -> Zip
                    -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                    -> WorkflowOutput
                -> PropertyMapping(FileName) => #7
                ExternalizedMapping(FrameRate) => #8
                #5, #7, #8 -> Bonsai.Vision.VideoWriter
                  FileName="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\Cameras\VideoData_Camera3.avi"
                  Suffix=None
                  Buffered=true
                  Overwrite=true
                  FourCC=FMP4
                  FrameRate=50
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor
                -> WorkflowOutput

    Disable GroupWorkflow Audio
        SubscribeSubject AudioTrigger
        -> StringProperty(Value=AudioTrigger)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
        -> WorkflowOutput

    GroupWorkflow LicketySplit
        SubscribeSubject LickEventsLeft
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> GroupWorkflow LogHarpDevice
            WorkflowInput Source1 => #0
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Read) => #1
            ExternalizedMapping(LogName) => #2
            #1, #2 -> GroupWorkflow LogHarp(Description="Logs a timestamped harp data stream into the base data log.") => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the data log, without extension.")) => #1
                #0, #1 -> CreateObservable LogHarp
                    WorkflowInput Source1
                    -> AsyncSubject Data

                    SubscribeSubject Data
                    -> MemberSelector(Selector=MessageBytes) => #3
                    SubscribeSubject Data => #4
                    ExternalizedMapping(Name) => #5
                    #4, #5 -> GroupWorkflow FormatFileName
                        SubscribeSubject PathPrefix => #0
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #1
                        WorkflowInput Source1 => #2
                        #1, #2 -> StringProperty(Value=LicketySplitLeft)
                        -> Take(Count=1) => #4
                        -> UclOpen.Core.StripSubstring => #5
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=bin)
                        -> Take(Count=1) => #8
                        #0, #5, #4, #8 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(Path) => #7
                    #3, #7 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
                    -> WorkflowOutput
                -> Switch
                -> WorkflowOutput
            #0 -> Condition Data => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=MessageType)
                -> NotEqual(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Read))
                -> WorkflowOutput
            #4, #2 -> GroupWorkflow LogHarpDemux => #5
                WorkflowInput Source1
                -> GroupBy(KeySelector=Address, ElementSelector="") => #1
                ExternalizedMapping(LogName) => #2
                #1, #2 -> SelectMany LogRegisters
                    WorkflowInput Source1
                    -> AsyncSubject Register

                    ExternalizedMapping(Value(DisplayName=LogName))
                    -> StringProperty(Value=LicketySplitLeft)
                    -> Take(Count=1) => #4
                    SubscribeSubject Register
                    -> MemberSelector(Selector=Key) => #6
                    #4, #6 -> Zip
                    -> Format(Format={0}_{1}, Selector="Item1,Item2")
                    -> AsyncSubject LogName

                    SubscribeSubject Register
                    -> CreateObservable LogHarp
                        WorkflowInput Source1
                        -> AsyncSubject Data

                        SubscribeSubject Data
                        -> Merge
                        -> MemberSelector(Selector=MessageBytes) => #4
                        SubscribeSubject Data
                        -> MemberSelector(Selector=Key) => #6
                        SubscribeSubject LogName
                        -> PropertyMapping(Name) => #8
                        #6, #8 -> GroupWorkflow FormatFileName
                            SubscribeSubject PathPrefix => #0
                            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #1
                            WorkflowInput Source1 => #2
                            #1, #2 -> StringProperty(Value=LicketySplitLeft_32)
                            -> Take(Count=1) => #4
                            -> UclOpen.Core.StripSubstring => #5
                            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                            -> StringProperty(Value=bin)
                            -> Take(Count=1) => #8
                            #0, #5, #4, #8 -> Zip
                            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                            -> WorkflowOutput
                        -> PropertyMapping(Path) => #10
                        #4, #10 -> Bonsai.Dsp.MatrixWriter
                          Path="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\LicketySplitLeft_32\LicketySplitLeft_32.bin"
                          Suffix=Timestamp
                          Overwrite=false
                          Layout=ColumnMajor
                        -> WorkflowOutput
                    -> Switch
                    -> WorkflowOutput
                -> WorkflowOutput
            #3, #5 -> Merge
            -> WorkflowOutput

        SubscribeSubject LickEventsRight
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> GroupWorkflow LogHarpDevice
            WorkflowInput Source1 => #0
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Read) => #1
            ExternalizedMapping(LogName) => #2
            #1, #2 -> GroupWorkflow LogHarp(Description="Logs a timestamped harp data stream into the base data log.") => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the data log, without extension.")) => #1
                #0, #1 -> CreateObservable LogHarp
                    WorkflowInput Source1
                    -> AsyncSubject Data

                    SubscribeSubject Data
                    -> MemberSelector(Selector=MessageBytes) => #3
                    SubscribeSubject Data => #4
                    ExternalizedMapping(Name) => #5
                    #4, #5 -> GroupWorkflow FormatFileName
                        SubscribeSubject PathPrefix => #0
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #1
                        WorkflowInput Source1 => #2
                        #1, #2 -> StringProperty(Value=LicketySplitRight)
                        -> Take(Count=1) => #4
                        -> UclOpen.Core.StripSubstring => #5
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=bin)
                        -> Take(Count=1) => #8
                        #0, #5, #4, #8 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(Path) => #7
                    #3, #7 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
                    -> WorkflowOutput
                -> Switch
                -> WorkflowOutput
            #0 -> Condition Data => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=MessageType)
                -> NotEqual(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Read))
                -> WorkflowOutput
            #4, #2 -> GroupWorkflow LogHarpDemux => #5
                WorkflowInput Source1
                -> GroupBy(KeySelector=Address, ElementSelector="") => #1
                ExternalizedMapping(LogName) => #2
                #1, #2 -> SelectMany LogRegisters
                    WorkflowInput Source1
                    -> AsyncSubject Register

                    ExternalizedMapping(Value(DisplayName=LogName))
                    -> StringProperty(Value=LicketySplitRight)
                    -> Take(Count=1) => #4
                    SubscribeSubject Register
                    -> MemberSelector(Selector=Key) => #6
                    #4, #6 -> Zip
                    -> Format(Format={0}_{1}, Selector="Item1,Item2")
                    -> AsyncSubject LogName

                    SubscribeSubject Register
                    -> CreateObservable LogHarp
                        WorkflowInput Source1
                        -> AsyncSubject Data

                        SubscribeSubject Data
                        -> Merge
                        -> MemberSelector(Selector=MessageBytes) => #4
                        SubscribeSubject Data
                        -> MemberSelector(Selector=Key) => #6
                        SubscribeSubject LogName
                        -> PropertyMapping(Name) => #8
                        #6, #8 -> GroupWorkflow FormatFileName
                            SubscribeSubject PathPrefix => #0
                            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #1
                            WorkflowInput Source1 => #2
                            #1, #2 -> StringProperty(Value=LicketySplitRight_32)
                            -> Take(Count=1) => #4
                            -> UclOpen.Core.StripSubstring => #5
                            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                            -> StringProperty(Value=bin)
                            -> Take(Count=1) => #8
                            #0, #5, #4, #8 -> Zip
                            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                            -> WorkflowOutput
                        -> PropertyMapping(Path) => #10
                        #4, #10 -> Bonsai.Dsp.MatrixWriter
                          Path="C:\Data\AV_Dome_ClosedLoop\sub-Dummy\ses-Stage 0_date-2026-08-27T11-32-12\LicketySplitRight_32\LicketySplitRight_32.bin"
                          Suffix=Timestamp
                          Overwrite=false
                          Layout=ColumnMajor
                        -> WorkflowOutput
                    -> Switch
                    -> WorkflowOutput
                -> WorkflowOutput
            #3, #5 -> Merge
            -> WorkflowOutput

    SubscribeSubject ClockSynchronizerEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=TimestampGenerator) => #20
    SubscribeSubject PathPrefix => #21
    #20, #21 -> SubscribeWhen

    SubscribeSubject StartSession
    -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName=SessionState, Selector="Seconds,Value", Extension=csv)

Disable SubscribeSubject FrameEvents1
-> Disable Skip(Count=1)
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera1) => #9
Disable SubscribeSubject FrameEvents2
-> Disable Skip(Count=1)
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera2) => #13
Disable SubscribeSubject FrameEvents3
-> Disable Skip(Count=1)
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera3) => #17
#9, #13, #17 -> Disable Merge
-> Disable Bonsai.IO.CsvWriter(FileName=C:\testdata\droppedFrames.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false, Selector=it)

SubscribeSubject ResponseData
-> SelectMany RedefineTrialData
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject source

    SubscribeSubject source => #3
    ExternalizedMapping(Seed) => #4
    #3, #4 -> SelectMany RedefineTrial
        SubscribeSubject TrialConfig => #0
        ExternalizedMapping(Seed) => #1
        Defer "Get training stage"
            WorkflowInput Source1

            SubscribeSubject trainingStageStr => #1
            -> Condition "Stage 0?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 0") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=0) => #3
            #1 -> Condition "Stage 1?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 1") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #1 -> Condition "Stage 2?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 2") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=2) => #7
            #1 -> Condition "Stage 3?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 3") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=3) => #9
            #1 -> Condition "Stage 4?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 4") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #1 -> Condition "Stage 5?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 5") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=5) => #13
            #3, #5, #7, #9, #11, #13 -> Merge
            -> WorkflowOutput
        -> PropertyMapping(trainingStageId) => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=CorrectResponse) => #5
        -> Equal(Operand=StringProperty(Value=Correct)) => #6
        #5 -> Equal(Operand=StringProperty(Value=AutoRewarded)) => #7
        #6, #7 -> Zip
        -> BitwiseOr
        -> PropertyMapping(WasCorrect) => #10
        #0, #1, #3, #10 -> TrialTypeInitialise(autoRewardProbability=0, BothSpoutsProbability=0.5, RewardSizeInUl=4, Seed=-1, trainingStageId=0, TrialType=-1, WasCorrect=false, WasTimeout=false)
        -> WorkflowOutput
    -> Take(Count=1)
    -> SelectMany SetTrialVars
        WorkflowInput Source1 => #0
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=visualAzimuth) => #2
        -> MulticastSubject visualAzimuthStart
        #2 -> MulticastSubject visualAzimuth

        IntProperty(Value=0)
        -> MulticastSubject DecisionVariable
    -> WorkflowOutput
-> MulticastSubject thisTrialData

SubscribeSubject thisTrialData
-> Disable SelectMany "Present Spouts"
    WorkflowInput Source1 => #0
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #2
    -> Condition True?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany SendSpoutINCommand => #4
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_BothIn
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> Sample
        -> WorkflowOutput
    #2 -> Condition False?
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany PresentTargetSpoutOnly => #6
        WorkflowInput Source1 => #0
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=targetSide) => #2
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand => #4
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #2 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand => #6
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #4, #6 -> Merge => #7
        #0, #7 -> Sample
        -> WorkflowOutput
    #4, #6 -> Merge => #7
    #0, #7 -> Sample
    -> WorkflowOutput
-> Disable Bonsai.Shaders.Delay(DueTime=PT0.5S)
-> SelectMany ExecuteTrial => #26
    WorkflowInput Source1
    -> AsyncSubject trial

    SubscribeSubject trial
    -> SelectMany StimuliPresentation
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings

        Annotation "Auditory Stimulus"(Text="Auditory Stimulus")
        -> SubscribeSubject settings => #4
        -> MemberSelector(Selector=audioAzimuth)
        -> PropertyMapping(X) => #6
        #4, #6 -> SelectMany "Define Speaker location"
            Disable SubscribeSubject thisTrialData
            -> Disable MemberSelector(Selector=audioAzimuth)
            -> Disable PropertyMapping(X) => #2
            ExternalizedMapping(X) => #3
            Source2=#2, Source2=#3 -> Bonsai.Shaders.CreateVector3(X=-60, Y=15, Z=0) => #4
            SubscribeSubject SpeakerLocations
            -> PropertyMapping(Locations) => #6
            #4, #6 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
            -> MulticastSubject ActiveSoundChannels => #8
            WorkflowInput Source1 => #9
            #8, #9 -> Sample
            -> BooleanProperty(Value=true)
            -> BehaviorSubject AudReady

        Annotation "Visual Stimulus"(Text="Visual Stimulus")
        -> SubscribeSubject settings
        -> SelectMany FlashingVisualStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trialSettings

            SubscribeSubject DrawStimuli => #3
            Annotation 16Hz(Text=16Hz) => #4
            SubscribeSubject trialSettings
            -> MemberSelector(Selector=visualFlickerFrequency) => #6
            Annotation "Double freq for On/Off"(Text="Double freq for On/Off") => #7
            #6, #7 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 / (2 * it))
            -> PropertyMapping(Period) => #9
            #4, #9 -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.063S)
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #11
            #3, #11 -> WithLatestFrom => #12
            -> MemberSelector(Selector=Item1) => #13
            #12 -> MemberSelector(Selector=Item2) => #14
            Annotation "Makes it 8Hz"(Text="Makes it 8Hz") => #15
            #14, #15 -> Condition => #16
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> WorkflowOutput
            #13, #16 -> Sample => #17
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #18
            #17, #18 -> IncludeWorkflow => #19
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Annotation "Either Response or Timeout"(Text="Either Response or Timeout")
            -> SubscribeSubject StopStimuli
            -> Delay(DueTime=PT1S) => #22
            #19, #22 -> TakeUntil => #23
            Annotation "GratingSettings from Schema"(Text="GratingSettings from Schema")
            -> SubscribeSubject trialSettings
            -> PropertyMapping => #26
              Contrast(Selector=visualContrast)
              LocationY(Selector=visualElevation)
              TemporalFrequency(Selector=visualTemporalFrequency)
              SpatialFrequency(Selector=visualSpatialFrequency)
              Angle(Selector=visualOrientation)
              Phase(Selector=visualPhase)
            Annotation "Extend in deg"(Text="Extend in deg")
            -> Annotation "Large enough so you dont see any edges"(Text="Large enough so you dont see any edges")
            -> Annotation "100 makes rel. numbers below easier!"(Text="100 makes rel. numbers below easier!")
            -> FloatProperty(Value=100) => #30
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #31
            Disable Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg")
            -> Disable FloatProperty(Value=9) => #33
            SubscribeSubject trialSettings => #34
            Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg") => #35
            #34, #35 -> MemberSelector(Selector=visualGaussianWindowSigma) => #36
            #33, #36 -> Multiply(Operand=FloatProperty(Value=2)) => #37
            #37, #30 -> Zip => #38
            Annotation RelativeSigma(Text=RelativeSigma) => #39
            #38, #39 -> Divide
            -> PropertyMapping(Aperture(Selector=it)) => #41
            Annotation "Norm. 1: full size of ExtentX/Y"(Text="Norm. 1: full size of ExtentX/Y")
            -> FloatProperty(Value=1)
            -> PropertyMapping(Radius) => #44
            SubscribeSubject visualAzimuth
            -> PropertyMapping(LocationX) => #46
            #17, #26, #31, #41, #44, #46 -> IncludeWorkflow => #47
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=-120
              LocationY=15
              Layer=0
              ExtentX=100
              ExtentY=100
              SpatialFrequency=0.06666667
              TemporalFrequency=0
              Phase=196.0994
              Angle=0
              SquareWave=false
              Contrast=3
              DutyCycle=nil
              Radius=1
              Aperture=0.4
              Opacity=1
            #47, #22 -> TakeUntil => #48
            #14 -> Condition Not => #49
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> BitwiseNot
                -> WorkflowOutput
            #3, #49 -> Sample => #50
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #51
            #50, #51 -> IncludeWorkflow => #52
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            #52, #22 -> TakeUntil => #53
            #23, #48, #53 -> Zip
            -> WorkflowOutput
            #11 -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject StartAuditoryStimulus

            Disable MulticastSubject StartAuditoryStimulus
            -> Disable WorkflowOutput

            Disable StringProperty(Value=Done)
            -> Disable MulticastSubject StopStimuli => #62
            Disable Bonsai.Shaders.Timer(DueTime=PT1.5S) => #63
            #62, #63 -> Disable SubscribeWhen
    -> Disable PublishSubject StimuliFinished

    SubscribeSubject trial
    -> MemberSelector(Selector=openLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT0S)
    -> Disable SelectMany PlayGoCue => #10
        BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryGoCue
        -> WorkflowOutput
    Disable SubscribeSubject trial => #11
    Disable Annotation ResponseWindowInSec(Text=ResponseWindowInSec) => #12
    #11, #12 -> Disable MemberSelector(Selector=closedLoopDuration)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> Disable PropertyMapping(DueTime) => #15
    #10, #15 -> SelectMany Response => #16
        SubscribeSubject DecisionVariable => #0
        -> Condition left?
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=IntProperty(Value=4))
            -> WorkflowOutput
        -> Take(Count=1) => #2
        SubscribeSubject trial => #3
        #2, #3 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Left)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Left) => #6
        #0 -> Condition right?
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=IntProperty(Value=-4))
            -> WorkflowOutput
        -> Take(Count=1) => #8
        #8, #3 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Right)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Right) => #11
        Bonsai.Shaders.Timer(DueTime=PT1M)
        -> Take(Count=1) => #13
        #13, #3 -> WithLatestFrom
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #16
        SubscribeSubject trial
        -> MemberSelector(Selector=autoReward)
        -> Take(Count=1) => #19
        #13, #19 -> WithLatestFrom
        -> Condition AutoRewarded?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> StringProperty(Value=AutoRewarded) => #22
        #6, #11, #16, #22 -> Merge
        -> SelectMany "Stop Stimulus"
            WorkflowInput Source1 => #0
            StringProperty(Value=Done)
            -> MulticastSubject StopStimuli => #2
            #0, #2 -> Sample
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject LickStateLeft
        -> Condition True?
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #29
        SubscribeSubject LickStateRight
        -> Condition True?
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #32
        #29, #32 -> Merge => #33
        SubscribeSubject DecisionVariable => #34
        #33, #34 -> WithLatestFrom
        -> Add
        -> MulticastSubject DecisionVariable

        SubscribeSubject DecisionVariable => #38
        Annotation DegreesPerLick(Text=DegreesPerLick)
        -> IntProperty(Value=15) => #40
        #38, #40 -> WithLatestFrom
        -> Multiply => #42
        SubscribeSubject visualAzimuthStart => #43
        #42, #43 -> WithLatestFrom
        -> Add
        -> MulticastSubject visualAzimuth
    -> MulticastSubject TrialSuccess
    -> Disable MulticastSubject StopStimuli => #18
    Annotation Original(Text=Original) => #19
    #18, #19 -> SelectMany ApplyConsequences => #20
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #1
        WorkflowInput Source1 => #2
        #1, #2 -> WithLatestFrom => #3
        -> Condition NotAutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2") => #5
        -> Condition MISS
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #8
        SubscribeSubject trial
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: TimeSpan.FromSeconds(IncorrectTimeoutDuration)
        -> PropertyMapping(DueTime) => #11
        #8, #11 -> SelectMany Timeout => #12
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #5 -> Condition NotMISS => #13
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition INCORRECT
            WorkflowInput Source1
            -> Equal
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> SelectMany PlayErrorSound
            BooleanProperty(Value=true)
            -> MulticastSubject StartAuditoryErrorSound
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect) => #17
        #10 -> PropertyMapping(DueTime) => #18
        #17, #18 -> SelectMany Timeout => #19
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #13 -> Condition HIT
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        -> MulticastSubject RewardTargetSide
        -> StringProperty(Value=Correct) => #22
        #3 -> Condition AutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2")
        -> MulticastSubject RewardTargetSide
        -> StringProperty(Value=AutoRewarded) => #26
        #12, #19, #22, #26 -> Merge
        -> Take(Count=1) => #28
        Annotation "Give animal time to drink"(Text="Give animal time to drink") => #29
        #28, #29 -> Bonsai.Shaders.Delay(DueTime=PT1.5S)
        -> SelectMany SendSpoutOutCommand => #31
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        Annotation "Needed to move here so deliver rewards still executes"(Text="Needed to move here so deliver rewards still executes") => #32
        #31, #32 -> SelectMany ITI
            WorkflowInput Source1 => #0
            SubscribeSubject trial => #1
            Annotation "Subtract extra time for spout movements and drinking"(Text="Subtract extra time for spout movements and drinking") => #2
            #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(Math.Max(ITI-2.0, 0))
            -> PropertyMapping(DueTime) => #4
            #0, #4 -> Bonsai.Shaders.Delay(DueTime=PT2.81S)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject TrialCount
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialCount => #24
    #20, #16, #24 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(it.Item1 as CorrectResponse,
            it.Item2 as Response,
            it.Item3 as TrialCnt)
    -> WorkflowOutput

    SubscribeSubject trial
    -> MemberSelector(Selector=SpoutINDelay)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT0.5S)
    -> SelectMany "Present Spouts"
        WorkflowInput Source1 => #0
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=BothSpouts) => #2
        -> Condition True?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SendSpoutINCommand => #4
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothIn
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #2 -> Condition False?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany PresentTargetSpoutOnly => #6
            WorkflowInput Source1 => #0
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=targetSide) => #2
            -> Condition Left
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Left))
                -> WorkflowOutput
            -> SelectMany SendSpoutLeftINCommand => #4
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_LeftIN
                -> MulticastSubject StepperPositionCommand => #3
                #0, #3 -> Sample
                -> WorkflowOutput
            #2 -> Condition Right
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Right))
                -> WorkflowOutput
            -> SelectMany SendSpoutRightINCommand => #6
                WorkflowInput Source1 => #0
                Annotation MoveToOutPosition(Text=MoveToOutPosition)
                -> SubscribeSubject StepperPosition_RightIN
                -> MulticastSubject StepperPositionCommand => #3
                #0, #3 -> Sample
                -> WorkflowOutput
            #4, #6 -> Merge => #7
            #0, #7 -> Sample
            -> WorkflowOutput
        #4, #6 -> Merge => #7
        #0, #7 -> Sample
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(System.String,System.String)> RewardTargetSide => #34
    -> Condition Left
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Left))
        -> WorkflowOutput
    -> SelectMany SendSpoutLeftINCommand
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_LeftIN
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> Sample
        -> WorkflowOutput
    -> IntProperty(Value=1) => #37
    #34 -> Condition Right
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Right))
        -> WorkflowOutput
    -> SelectMany SendSpoutRightINCommand
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_RightIN
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> Sample
        -> WorkflowOutput
    -> IntProperty(Value=2) => #40
    #37, #40 -> Merge => #41
    SubscribeSubject trial
    -> MemberSelector(Selector=RewardSizeInUl)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
      Expression: Convert.ToDouble(Math.Ceiling(it / 2))
    #41, #44 -> WithLatestFrom
    -> SelectMany "Deliver Reward"
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject input

        SubscribeSubject input
        -> MemberSelector(Selector=Item1) => #4
        Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #5
        #4, #5 -> MulticastSubject TriggerValve => #6
        SubscribeSubject RigConfigs => #7
        -> MemberSelector(Selector=ValveOpenTimeLeft)
        -> Condition LeftValve? => #9
            WorkflowInput Source1

            SubscribeSubject input
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #7 -> MemberSelector(Selector=ValveOpenTimeRight)
        -> Condition RightValve? => #11
            WorkflowInput Source1

            SubscribeSubject input
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        #9, #11 -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(1 * 0.001 * it)
        -> PropertyMapping(DueTime) => #14
        #6, #14 -> Bonsai.Shaders.Delay(DueTime=PT0.055S) => #15
        SubscribeSubject input
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Count) => #18
        #15, #18 -> RepeatCount(Count=2)
        -> WorkflowOutput
Annotation => #27
  Text:
    Here we have the trial number and the reponse code.
    Things we want to do with this:

    1. Different outcomes depending on response,
            # Incorrect, then we have a timeout
            # Correct, valve trigger


    1. Track performance and visualise in the gui
            Track actual response (0/-1/1) of last 50 trials
            Running performance over 20 responsive trials (True/False)
#26, #27 -> BehaviorSubject ResponseData => #28
Annotation "This fires at declaration, so skip"(Text="This fires at declaration, so skip")
-> SubscribeSubject StartSession
-> Skip(Count=1)
-> Condition => #32
    WorkflowInput Source1
    -> WorkflowOutput
#28, #32 -> SubscribeWhen
-> TakeWhile
    SubscribeSubject StartSession
    -> WorkflowOutput
-> TakeLast(Count=1)
-> Repeat

IncludeWorkflow(Path=Extensions\StallDiagnostics.bonsai, HarpClockSubjectName=Timestamp, ResponseSubjectName=ResponseData, TrialStartSubjectName=thisTrialData)

GroupWorkflow StimulusTriggerLogs(Description="Harp-timestamped CSV log of the auditory/stimulus-presentation trigger (StartAuditoryStimulus).")
    SubscribeSubject StartAuditoryStimulus
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName=StimulusStartEvents, Selector="Seconds,Value", Extension=csv)
